config:
  title: UW BIOFAB Simple Plasmid Construction
  description: A workflow for constructing plasmids
  copyright: University of Washington
  version: 0.0.1
  authors: [{name: Tileli Amimeur, affiliation: University of Washington}, {name: Nick Bolten, affiliation: University of Washington}, {name: Leandra Brettner, affiliation: University of Washington}, {name: Cameron Cordray, affiliation: University of Washington}, {name: Miles Gander, affiliation: University of Washington}, {name: Samer Halabiya, affiliation: University of Washington}, {name: Seunghee Jang, affiliation: University of Washington}, {name: Yokesh Jayakumar, affiliation: University of Washington}, {name: Jon Luntzel, affiliation: University of Washington}, {name: Abraham Miller, affiliation: University of Washington}, {name: Garrett Newman, affiliation: University of Washington}, {name: Michelle Parks, affiliation: University of Washington}, {name: Sundipta Rao, affiliation: University of Washington}, {name: Ayesha Saleem, affiliation: University of Washington}, {name: Chris Takahashi, affiliation: University of Washington}, {name: Yaoyu Yang, affiliation: University of Washington}, {name: David Younger, affiliation: University of Washington}]
  maintainer: {name: Ben Keller, email: bjkeller@uw.edu}
  acknowledgements: [{name: Devin Strickland, affiliation: University of Washington}]
  github: {user: bjkeller, repo: simple-plasmid-construction, organization: klavinslab}
  keywords: [Cloning, molecular biology, plasmid, DNA]
  aquadoc_version: 1.0.0
  aquarium_version: 2.6.0-alpha
sample_types:
  - {name: Fragment, description: A linear double stranded piece of DNA from PCR or Restriction Digest}
    - {name: Sequence, ftype: url, required: true}
    - {name: Length, ftype: number, required: true}
    - {name: Template, ftype: sample, sample_types: [Plasmid, E coli strain, Fragment, Yeast Strain, DNA Library]}
    - {name: Forward Primer, ftype: sample, sample_types: [Primer, Fragment]}
    - {name: Reverse Primer, ftype: sample, sample_types: [Primer, Fragment]}
    - {name: Restriction Enzyme(s), ftype: string}
    - {name: Yeast Marker, ftype: string}
    - {name: Fragment Mix Array, ftype: sample, array: true, sample_types: [Primer, Fragment]}
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker, ftype: string, choices: Amp,Kan,Amp + Kan,Spec,Kan + Spec,Chlor,Tet,NA,Other, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS,TRP,URA,LEU,NatMX,KanMX,HygMX,BleoMX,5FOA,NA,Other, sample_types: [Primer]}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: QC Primer1, ftype: sample, sample_types: [Primer]}
    - {name: QC Primer2, ftype: sample, sample_types: [Primer]}
    - {name: QC_length, ftype: number}
    - {name: Transformation Temperature, ftype: number, choices: 37,30}
  - {name: Primer, description: A short double stranded piece of DNA for PCR and sequencing}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
  - {name: E coli strain, description: A strain of E coli distinguished from others by genomic (not plasmid) modifications.}
    - {name: Parent, ftype: sample, required: true, sample_types: [E coli strain]}
  - {name: Yeast Strain, description: A strain of yeast distinguished from others by genomic or plasmid modifications}
    - {name: Parent, ftype: sample, sample_types: [Yeast Strain]}
    - {name: Integrant, ftype: sample, sample_types: [Plasmid, Fragment]}
    - {name: Plasmid, ftype: sample, sample_types: [Plasmid]}
    - {name: Integrated Marker(s), ftype: string}
    - {name: Plasmid Marker(s), ftype: string}
    - {name: Mating Type, ftype: string, choices: MATa,MATalpha,Diploid, required: true}
    - {name: QC Primer1, ftype: sample, sample_types: [Primer]}
    - {name: QC Primer2, ftype: sample, sample_types: [Primer]}
    - {name: QC_length, ftype: number}
    - {name: Comp_cell_limit, ftype: string, choices: Yes,No}
    - {name: Media, ftype: string}
    - {name: Has this strain passed QC?, ftype: string, choices: No,Yes}
    - {name: Haploids, ftype: sample, array: true, sample_types: [Yeast Strain]}
  - {name: DNA Library, description: A sample that contains a pool of DNA molecules with many unique sequences}
    - {name: Oligo Pool, ftype: sample, sample_types: [Oligo Pool]}
  - {name: Oligo Pool, description: Pool or library of ssDNA oligos. May contain one or more sublibraries. In array fields, the n-th position corresponds to n-th sublibrary. "forward priming site" and "reverse priming site" are read as primer sequences.}
    - {name: Manufacturer, ftype: string, required: true}
    - {name: Oligo Library ID, ftype: number, required: true}
    - {name: inner forward primer (array), ftype: sample, array: true, required: true, sample_types: [Primer]}
    - {name: inner reverse primer (array), ftype: sample, array: true, required: true, sample_types: [Primer]}
    - {name: sublibrary forward primer (array), ftype: sample, array: true, required: true, sample_types: [Primer]}
    - {name: sublibrary reverse primer (array), ftype: sample, array: true, required: true, sample_types: [Primer]}
    - {name: min length (nt) (array), ftype: number, array: true, required: true}
    - {name: max length (nt) (array), ftype: number, array: true, required: true}
    - {name: variants (array), ftype: number, array: true, required: true}
    - {name: sublibrary name (array), ftype: string, array: true, required: true}
    - {name: forward priming site (array), ftype: string, array: true, required: true}
    - {name: reverse priming site (array), ftype: string, array: true, required: true}
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object_types:
  - {name: Fragment Stock, description: Fragment stock in 1.5 mL tube, usually stored in M20 fridge., handler: sample_container, unit: Fragment, release_method: return, prefix: M20, sample_type_name: Fragment}
  - {name: Gibson Reaction Result, description: A plasmid that was made from Gibson reaction and stayed in the Gibson reaction tube. One can use this to do transform and extract the plasmid., handler: sample_container, unit: Plasmid, release_method: return, prefix: M20, sample_type_name: Plasmid}
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operation_type: Assemble Plasmid
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 690, stop: 750, days: ["Mo","Tu","We","Th","Fr"], active: true}
field_types:
  - {ftype: sample, role: input, name: Fragment, sample_types: [Fragment], object_types: [Fragment Stock], array: true, routing: F}
  - {ftype: sample, role: output, name: Assembled Plasmid, sample_types: [Plasmid], object_types: [Gibson Reaction Result], routing: P}
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documentation:
Assembles Plasmid.

The technician combines the input array of fragments and, using Gibson Assembly, assembles a plasmid. Each Gibson reaction is fixed at a volume of 5 uL, and so the volume of each fragment is calculated using an algorithm that takes in the number of total fragments in the Gibson reaction and the concentration in ng/uL of each individual fragment. The lower bounds for volume is 0.2 uL; if any fragment is below 0.2 uL, or if the overall reaction is greater than 5 uL, the volumes are tweaked for each fragment until the reaction is once more balanced. The reaction is then placed on a 42 F heat block for one hour.

Ran after **Make PCR Fragment** (if the fragment is not already in inventory) and is a precursor to **Transform Cells**.

precondition:
def precondition(op)
    
    if op.input_array("Fragment").length < 2
        op.error :more_fragments, "You usually shouldn't do a gibson assembly with less than 2 fragments. Was this intentional?"
        return true
    end
    
    
    op.input_array("Fragment").each do |f|
        if f.sample.properties["Length"] == 0.0
            op.error :need_fragment_length, "Your fragment #{f.sample.name} needs a valid length for assembly."
            
            return false
        end
    end
    
    return true
end

cost_model:
# Assemble Plasmid/Gibson Cost Model

def cost(op)
    {
        materials: 3.87,
        labor: 6.16 
    }      
end

protocol:
# Author: Ayesha Saleem
# December 20, 2016

require 'matrix'
needs "Cloning Libs/Special Days"
needs "Cloning Libs/Cloning"
needs "Standard Libs/Feedback"
# For calculating equimolar concentrations, Yaoyu has written up a great explanation: 

    # math behind the equimolar volume calculation
    # Assume that there are n fragment stocks, each with concentrations c1,..., cn, and lengths l1,...,ln. The volumes of each fragment stocks to add in the Gibson reaction is denoted as v1,...,vn. Assuming that the molecular weight (g/mol) of the fragment is proportional to the lenght of the fragment, to ensure equimolar of these n fragment stocks, the following must satisfy:
    # v1 + ... + vn = 5 (the total gibson reaction volume)
    # v1 * c1 / l1 = ... = vn * cn / ln (they're equimolar)
    # unit of v is uL, unit of c is g/uL, unit of l1 (molecular weight) is g/mol
    # thus v * c / l represent the moles of the fragment stock, and esuring v1 * c1 / l1 = ... = vn * cn / ln lead to equimolar fragment stocks.
    # These mathmatical constraints can be reformated as:
    # v1 + ... + vn = 5
    # v1 * c1 / l1 - v2 * c2 / l2 = 0
    # v1 * c1 / l1 - v3 * c3 / l3 = 0
    #          ...
    # v1 * c1 / l1 - vn * cn / ln = 0
    # The following matrix equations hold:
    # coefficient_matrix * fragment_volumes = total_vector,
    # where 
    # coefficient_matrix = [
    # [1, 1, ..., 1]
    # [c1 / l1, -c2 / l2, ..., 0]
    # [c1 / l1, 0, - c3 / l3 ..., 0]
    # ...
    # [c1 / l1, 0, ..., - vn * cn / ln]
    # ]  (n x n matrix)
    # fragment_volumes = [[v1], [v2], ..., [vn]] (n x 1 matrix)
    # total_vector = [[5], [0], ..., [0]] (n x 1 matrix)
    # matrix multiplication
    # coefficient_matrix.inv * coefficient_matrix * fragment_volumes = coefficient_matrix.inv * total_vector
    # Therefore we have
    # fragment_volumes = coefficient_matrix.inv * total_vector

# NEED TO TEST: 
    # ensuring volume
    # replacing fragment stock

class Protocol
    include Cloning, Feedback, SpecialDays
    debug = false
    
    # this builds a matrix with 1's in the first row
    # the concentration over length (c / l) of the fragment when row = column
    # (with alternating sign) and 0's everywhere else
    def main
        
        # Check for valid fragment lengths
        operations.each do |op|
          fragments_fv = op.input_array("Fragment")
          fragments_fv.each do |fragment|
              if fragment.item.sample.properties["Length"].nil?
                  op.error :invalid_length, "This fragment's length is not valid."
              end
          end
        end
        
        # Take fragments
        operations.retrieve
        operations.make

        check_concentration operations, "Fragment"
        
        temp = operations.running
        operations = temp
        
        #TODO: refactor gibson batch finding algorithm, gib_batch instantiation is uneccessarily long
        # determine which batches to grab gibson aliquots from
        gib_batch = Collection.where(object_type_id: ObjectType.find_by_name("Gibson Aliquot Batch").id).where('location != ?', "deleted").first
        if gib_batch.nil?
            operations.each { |op| op.error :not_enough_gibson, "There were not enough gibson aliquots to complete the operation." }
            raise "not enough gibson"
        end
        batch_id_array = [gib_batch.id]
        total_aliquots = gib_batch.num_samples
        aliquots_needed = operations.length
        i = 0
        while total_aliquots < aliquots_needed
            gib_batch.mark_as_deleted 
            i += 1
            gib_batch = Collection.where(object_type_id: ObjectType.find_by_name("Gibson Aliquot Batch").id).where('location != ?', "deleted").first
            if gib_batch.nil?
                operations.each { |op| op.error :not_enough_gibson, "There were not enough gibson aliquots to complete the operation." }
                raise "Aquarium cannot find any gibson aliquot batches in the system"
            end
            batch_id_array.push(gib_batch.id)
            total_aliquots += gib_batch.num_samples
        end
    
        #fetch gibson aliquots
        get_gibson_aliquots batch_id_array
        
        # Go through and pipette fragments into aliquots
        to_discard = []
        
        # Keep track of fragment stocks to return on errored ops.
        to_return = [];
        
        operations.each do |op|# calculate how much of each fragment is needed in aliquot
          tot_f_vol, f_vol = calc_gibson_volumes op
          vol_table = [["Fragment Stock IDs", "Volume"]].concat(op.input_array("Fragment").items.collect { |f| f.id}.zip f_vol.map { |v| { content: v, check: true }})
          
          # ask tech if there is enough volume
          vol_checking = show do 
            title "Checking Volumes"
            tot_f_vol.each do |id, v|
                select ["Yes", "No"], var: "v#{id}", label: "Does #{id} have at least #{v} uL?", default: 0
            end
          end
          
          # find replacements
          replacement = {}
          
          tot_f_vol.each do |id, v|
              if vol_checking["v#{id}".to_sym] == "No"
                  find_replacements replacement, to_discard, id, v
              end
          end
          
          # associate replacements with operation inputs
          find_replacement = []
          associate_replacements find_replacement, replacement, op
          
          if op.status != "error"
            # take find_replacement, interactive: true if find_replacement.any?
            check_concentration [op], "Fragment"
            
            #feature addition: make an extra column for this table to show whether a p2 pipette is required depending on if vol < 0.5
            if find_replacement.any?
              tot_f_vol, f_vol = calc_gibson_volumes op
              vol_table = [["Fragment Stock IDs", "Volume"]].concat(op.input_array("Fragment").items.collect { |f| f.id}.zip f_vol.map { |v| { content: v, check: true }})
            end
            load_gibson_reaction op, vol_table
          else
              
            # Keep track of what items need to be returned in the case of an error.
            current_fv = op.input_array("Fragment")
            current_fv.each do |fv|
                if fv.item.location != "deleted"
                    to_return.push(fv.item)
                end
            end
            
            show do
              title "Gibson canceled"
              note "Sorry it had to be this way. :/"
            end
          end
        end
    
        # put on heat block
        heat_block
        
        #return gibson aliquots
        data = return_gibson_aliquots aliquots_needed, batch_id_array
        aliquots_returned = data[:n]
        
        #updating gibson batches
        gibsons_used = aliquots_needed - aliquots_returned.to_i
        update_gibson_batches gibsons_used, batch_id_array
  
        # return aluminum tube rack, ice block
        return_aluminumTubeRack_and_iceBlock
        
        # return fragments
        release(to_return, interactive: true)
        operations.store(io: "input", interactive: true, method: "boxes")
        
        show do
          title "Discard depleted stocks"
          note "Discard the following stocks: #{to_discard.map { |s| s.id }}"
        end if to_discard.any?
        
        get_protocol_feedback()
        give_happy_birthday
          
    return {}
  end
  
    def gibson_coefficients row, col, conc_over_length
      # TODO fix this commented out section (only causes error when not debugging)
      # if !debug
        if row == 0
          return 1
        elsif col == 0
          return conc_over_length[0]
        elsif row == col
          return -conc_over_length[row]
        else
          return 0
        end
      # end
    end

    # this creates the "total_volume" row vector
    def gibson_vector row
      if row == 0
        return 5.0
      else
        return 0
      end
    end
    
    def calc_gibson_volumes op
      tot_f_vol = Hash.new(0)
      
      conc_over_length = op.input_array("Fragment").items.collect { |f| f.get(:concentration).to_f  / f.sample.properties["Length"]}
      
      n = conc_over_length.length
      total_vec = Matrix.build(n, 1) { |r, c| gibson_vector r }
      coef_m = Matrix.build(n, n) { |r, c| gibson_coefficients r, c, conc_over_length }
      vol_vec = (coef_m.inv * total_vec).each.to_a.collect! { |x| x.round(2) }
      f_vol = vol_vec.each.to_a.collect! { |x| x < 0.20 ? 0.20 : x }
      
      # this is to ensure that the rxn isn't > 5uL
      max = f_vol.max
      total = f_vol.reduce(:+)
      f_vol[f_vol.index(max)] = (max - (total - 5)).round(2) if total > 5
      
      # collect all volumes to ask tech if enough stock is present 
      op.input_array("Fragment").items.each_with_index do |f, i|
        tot_f_vol[f.id] = f_vol[i]
      end
      
      return tot_f_vol, f_vol
    end

  
  def heat_block
    if operations.running.any?
        show do 
            title "Put Reactions on Heat Block"
            warning "Vortex and spin all Gibson Reactions before putting them on the heat block!"
            note "Put all #{operations.running.length} on the 50 C heat block"
            note"<a href='https://www.google.com/search?q=1+hr+timer&oq=1+hr+timer&aqs=chrome..69i57j0l5.1684j0j7&sourceid=chrome&es_sm=122&ie=UTF-8#q=1+hour+timer' target='_blank'>
                Set a 1 hr timer on Google</a> to set a reminder to start the ecoli_transformation protocol and retrieve the Gibson Reactions."
        end
    end
  end
  
  def find_replacements replacement, to_discard, id, v
    f = Item.find(id)
    replacement[f.id] = f
    is_bad_replacement = true
    
    # Keep finding replacements if previous replacement doesn't have enough volume
    while(is_bad_replacement)
        to_discard.push replacement[f.id]
        replacement[f.id].move_to("deleted")
        replacement[f.id].save 
        replacement[f.id] = Item.where(sample_id: f.sample_id).where(object_type_id: f.object_type_id).where("location != ?", "deleted").to_a.first
        # Only do this if there exists a replacement
        # has the tech confirm if the new replacement has enough volume
        if replacement[f.id]
            loop_check = show do
                title "Find replacements"
                note "Retrieve #{replacement[f.id].id} from #{replacement[f.id].location}"
                select ["Yes", "No"], var: "v#{id}", label: "Does #{replacement[f.id].id} have at least #{v} uL?", default: 0
            end
            is_bad_replacement = !(loop_check["v#{id}".to_sym] == "Yes")
        else #exit the loop if there are no replacements available
            show do
                title "We couldnt find replacements."
            end
            is_bad_replacement = false;
        end
    end   
  end
  
  def get_gibson_aliquots batch_id_array
    show do
        title "Grab Gibson aliquots"
        note "Grab an ice block and aluminum tray from the fridge"
        note "Grab #{operations.length} Gibson aliquots from batch#{"es" if batch_id_array.length > 1} #{batch_id_array}, located in the M20"
    end
  end
  
  def load_gibson_reaction op, vol_table
    show do
      title "Load Gibson Reaction #{op.output("Assembled Plasmid").item.id}"
      note "Label an unused aliquot with #{op.output("Assembled Plasmid").item.id}"
      note "Make sure the Gibson aliquot is thawed before pipetting"
      warning "Please use the P2 for any volumes below 0.5 uL"
      table vol_table
    end
  end  
  
  def return_aluminumTubeRack_and_iceBlock
    show do
      title "Return ice block and aluminum tube rack"
      check "Return the ice block and aluminum tube rack."
      check "discard the used up gibson aliquot batch."
    end    
  end
  
  def return_gibson_aliquots aliquots_needed, batch_id_array
    data = show do
        title "Return unused gibson aliquots"
        note "#{aliquots_needed} aliquots were needed for this protocol, but you might have not used all of them."
        note "Return any unused aliquots to batch#{"es" if batch_id_array.length > 1} #{batch_id_array.reverse} in the M20"
        get "number", var: "n", label: "How many gibson aliquots will be returned?", default: "0"
        note "If you used more aliquots than predicted, indicate with a negative value."
    end
    data #return
  end
  
  def associate_replacements find_replacement, replacement, op
    replacement.each do |id, item|

      if item

        op.input_array("Fragment").find { |fv| fv.item.id == id }.set item: item
        find_replacement.push(item)
      else
        op.error :volume, "Insufficient fragment stock volume for Gibson reaction." 
        break
      end
    end
  end
  
    def update_gibson_batches gibsons_used, batch_id_array
        i = 0
        gib_batch = Collection.find batch_id_array[i]
        while gibsons_used > 0
            if gib_batch.empty?
                gib_batch.mark_as_deleted
                i += 1
                gib_batch = Collection.find batch_id_array[i]
            end
            
            gibsons_used -= 1
            gib_batch.remove_one
        end
        gib_batch
    end
end

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object_types:
  - {name: E coli Plate of Plasmid, description: A plate containing E. coli transformed with a plasmid, handler: sample_container, unit: Plasmid, release_method: return, prefix: DFP, sample_type_name: Plasmid}
  - {name: Checked E coli Plate of Plasmid, description: It's a checked plate, handler: sample_container, unit: plate, release_method: return, sample_type_name: Plasmid}
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operation_type: Check Plate
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 480, stop: 510, days: ["Mo","Tu","We","Th","Fr"], active: true}
field_types:
  - {ftype: sample, role: input, name: Plate, sample_types: [Plasmid], object_types: [E coli Plate of Plasmid], routing: P}
  - {ftype: sample, role: output, name: Plate, sample_types: [Plasmid], object_types: [Checked E coli Plate of Plasmid], routing: P}
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documentation:
Checks plates for growth and contamination.

The plates are pulled from the 37 F incubator and checked for growth and contamination. If there is no growth, the plate is thrown out and the user is notified.

Ran the day after **Plate Transformed Cells** and is a precursor to **Make Overnight Suspension**.

precondition:
eval Library.find_by_name("Preconditions").code("source").content
extend Preconditions

def precondition(op) 
  time_elapsed op, "Plate", hours: 8
  true
end

cost_model:
# Check Plate/Imaging Cost Model

def cost(op)
    {
        materials: 0.02,
        labor: 0.68 
    }      
end

protocol:
# Author: Ayesha Saleem
# December 20, 2016

# TO DO: 
    # Create option for "there are baby colonies but they're not big enough for protocols" case--put back in incubator
    # Re-streak the plate if there's too much contamination--fire check plate again in 24 hrs, probably collection
needs "Standard Libs/Feedback"
class Protocol
  include Feedback
  def main
    # Take plates  
    operations.retrieve
    
    # Count the number of colonies
    info = get_colony_numbers
    
    # Update plate data
    update_item_data info
    
    # Delete and discard any plates that have 0 colonies
    discard_bad_plates if operations.any? { |op| op.temporary[:delete] }
    
    # Parafilm and label plates 
    parafilm_plates
    
    # Return plates
    operations.store
    
    # Get feedback
    get_protocol_feedback()
    return {}
  end
  
  
  
  # Count the number of colonies and select whether the growth is normal, contaminated, or a lawn
  def get_colony_numbers
    show do
      title "Estimate colony numbers"
      
      operations.each do |op|
        plate = op.input("Plate").item
        get "number", var: "n#{plate.id}", label: "Estimate how many colonies are on #{plate}", default: 5
        select ["normal", "contamination", "lawn"], var: "s#{plate}", label: "Choose whether there is contamination, a lawn, or whether it's normal."
      end
    end    
  end
  
  # Alter data of the virtual item to represent its actual state
  def update_item_data info
    operations.each do |op|
      plate = op.input("Plate").item
      if info["n#{plate.id}".to_sym] == 0
        plate.mark_as_deleted
        plate.save
        op.temporary[:delete] = true
        op.error :no_colonies, "There are no colonies for plate #{plate.id}"
      else
        plate.associate :num_colonies, info["n#{plate.id}".to_sym]
        plate.associate :status, info["s#{plate.id}".to_sym]
        
        checked_ot = ObjectType.find_by_name("Checked E coli Plate of Plasmid")
        plate.store if plate.object_type_id != checked_ot.id
        plate.object_type_id = checked_ot.id
        plate.save
        op.output("Plate").set item: plate
        
        op.plan.associate "plate_#{op.input("Plate").sample.id}", plate.id
      end
    end
  end
  
  # discard any plates that have 0 colonies
  def discard_bad_plates
      show do 
        title "Discard Plates"
        
        discard_plate_ids = operations.select { |op| op.temporary[:delete] }.map { |op| op.input("Plate").item.id }
        note "Discard the following plates with 0 colonies: #{discard_plate_ids}"
    end
  end
  
  # Parafilm and label any plates that have suitable growth
  def parafilm_plates
    show do 
      title "Label and Parafilm"
      
      plates_to_parafilm = operations.reject { |op| op.temporary[:delete] }.map { |op| op.input("Plate").item.id }
      note "Perform the steps with the following plates: #{plates_to_parafilm}"
      note "Label the plates with their item ID numbers on the side, and parafilm each one."
      note "Labelling the plates on the side makes it easier to retrieve them from the fridge."
    end
  end
end

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object_types:
  - {name: Plasmid Stock, description: A 1.5 mL tube containing purified plasmid DNA, handler: sample_container, data: concentration:, unit: Plasmid, release_method: return, prefix: M20, sample_type_name: Plasmid}
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operation_type: Clean Up Sequencing
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 930, stop: 960, days: ["Su","Mo","Tu","We","Th","Fr","Sa"], active: true}
field_types:
  - {ftype: sample, role: input, name: Stock, sample_types: [Plasmid], object_types: [Plasmid Stock], routing: P}
  - {ftype: sample, role: input, name: Plate, sample_types: [Plasmid], object_types: [Checked E coli Plate of Plasmid], routing: P}
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documentation:
**If you are not a lab manager, please DO NOT submit this!**

This protocol does one of three things, depending on user response to sequencing results:
- "Yes": Discard plate.
- "Resequence": Do nothing.
- "No": Discard plasmid stock.

precondition:
eval Library.find_by_name("Cloning").code("source").content
extend Cloning

def precondition(op)
    # return true if response provided for sequencing results
    if op.plan
        # check plan associations
        response = plan.get(plan.associations.keys.find { |key| key.include? "#{op.input("Stock").item.id} sequencing ok?" })
        if response.present? &&
           (response.downcase.include?("yes") || response.downcase.include?("resequence") || response.downcase.include?("no")) &&
           !(response.downcase.include?("yes") && response.downcase.include?("no"))
           
            # Set plasmid stock and overnight to sequence-verified
            stock = op.input("Stock").item
            stock.associate :sequence_verified, "Yes"
            if stock.get(:from) && response.downcase.include?("yes")
                overnight = Item.find(stock.get(:from).to_i)
                pass_data "sequencing results", "sequence_verified", from: stock, to: overnight
            end
            
            return true
        end
    end
end

cost_model:
def cost(op)
  { labor: 1, materials: 0 }
end

protocol:
class Protocol
    
  # This method asks the technician if the sequencing of an operation's id is good or not
  # and acts based on the response. If the sequencing is not good, that operation fails.
  def gather_user_responses
    operations.select { |op| op.plan.get("Item #{op.input("Stock").item.id} sequencing ok?") }.each do |op|
        ans = op.plan.get("Item #{op.input("Stock").item.id} sequencing ok?").downcase
        if ans.include? "yes"
            op.plan.associate "seq_notice_#{op.input("Stock").item.id}".to_sym, "Plate #{op.input("Plate").item.id} has been discarded."
            
            op.temporary[:yes] = true
        elsif ans.include? "resequence"
            op.plan.associate "seq_notice_#{op.input("Stock").item.id}".to_sym, "Plasmid stock not verified; please resubmit this stock for sequencing."
            
            op.temporary[:resequence] = true
        else
            op.plan.associate "seq_notice_#{op.input("Stock").item.id}".to_sym, "Plasmid stock #{op.input("Stock").item.id} has been discarded."
            
            op.temporary[:no] = true
        end
    end
  end
  
  # This method tells the technician to discard plates from the good sequencing
  # results and then deletes those plates from Aquarium's inventory.
  def discard_plates
    show do 
        title "Discard plates from good sequencing results"
        
        note "Please discard the following plates: "
        operations.select { |op| op.temporary[:yes] }.each do |op|
            pl = op.input("Plate").item
            note "Plate #{pl.id} at #{pl.location}"
            pl.mark_as_deleted
            pl.save
        end
    end
  end
  
  # This method tells the technician to discard plates from the bad
  # sequencing results and then deletes those plates from Aquarium's inventory.
  def discard_stocks
    show do
        title "Discard Plasmid Stocks from bad sequencing results"
        
        note "Please discard the following Plasmid Stocks:"
        operations.select { |op| op.temporary[:no] }.each do |op|
            stock = op.input("Stock").item
            note "Plasmid Stock #{stock.id} at #{stock.location}"
            stock.mark_as_deleted
            stock.save
        end
    end 
  end
  
  def main

    # debuggin'
    if debug
        operations.each do |op| 
            op.plan.associate "Item #{op.input("Stock").item.id} sequencing ok?", ["yes somestuff", "no foo", "resequence bar"].sample
        end
    end

    operations.retrieve interactive: false 
    
    # Gather user responses
    gather_user_responses

    # Discard plates for yes
    discard_plates if operations.any? { |op| op.temporary[:yes] }

    # Discard plasmid stocks for no
    discard_stocks if operations.any? { |op| op.temporary[:no] }

    
    return {}
    
  end

end

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object_types:
  - {name: 50 mL 0.8 Percent Agarose Gel in Gel Box, description: Used to run gels;, handler: collection, unit: box, release_method: return, release_description: Return this item, rows: 2, columns: 6}
  - {name: Gel Slice, description: Gel Slice cut from a gel lane after gel was run. Often placed in a 1.5 mL tube., handler: sample_container, unit: Fragment, release_method: dispose, prefix: M20, sample_type_name: Fragment}
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operation_type: Extract Gel Slice
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 600, stop: 630, days: ["Mo","Tu","We","Th","Fr"], active: true}
field_types:
  - {ftype: sample, role: input, name: Fragment, sample_types: [Fragment, Plasmid], object_types: [50 mL 0.8 Percent Agarose Gel in Gel Box, 50 mL 0.8 Percent Agarose Gel in Gel Box], part: true, routing: F}
  - {ftype: sample, role: output, name: Fragment, sample_types: [Fragment, Plasmid], object_types: [Gel Slice, Gel Slice], routing: F}
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documentation:
Extracts a gel fragment from a gel.

A gel, after gel electrophoresis has been run, is imaged, and the technician uploads both the gel image and verifies whether or not the fragment matches the expected size. If the fragment is the correct length, the fragment is extracted from the gel; if it isn't, the operation errors out and the fragment is thrown out.

Ran after **Run Gel** and is a precursor to **Make PCR Fragment**. 

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cost_model:
# Extract Fragment from Gel Cost Model

def cost(op)
    {
        materials: 0.20,
        labor: 3.02 
    }      
end

protocol:
# Extract Fragment Protocol
# V1.0.2; 2017-07-17 JV
# Written by Ayesha Saleem
# Revised by Justin Vrana 2017-07-13; corrected upload issue
# Revised by Justin Vrana 2017-07-17; unique upload table
needs "Standard Libs/UploadHelper"
needs "Standard Libs/AssociationManagement"
needs "Standard Libs/Feedback"
class Protocol
    include Feedback
    include UploadHelper, AssociationManagement
        
    # I/O
    FRAGMENT="Fragment"
    FRAGMENT_OUT="Fragment"
    
    # upload stuff
    DIRNAME="<where are gel files on computer>"
    TRIES=3
    
    # gel stuff
    MIN_WEIGHT = 0.0
    MAX_WEIGHT = 10.0
    CORRECT=["y","n"] # values for debug

    def main
      
      # Sort operations by gels and columns (these can get out of order from PCR)
      operations.sort! do |op1, op2| 
        fv1 = op1.input(FRAGMENT)
        fv2 = op2.input(FRAGMENT)
        [fv1.item.id, fv1.row, fv1.column] <=> [fv2.item.id, fv2.row, fv2.column]
      end
      
      operations.retrieve(interactive: false)
      
      # get gel images
      gels = operations.map { |op| op.input(FRAGMENT).collection}.uniq
      gels.each { |gel|
    
        grouped_ops=operations.select { |op| op.input(FRAGMENT).collection == gel }
        image_name = "gel_#{gel.id}"
        
        # image gel
        image_gel gel, image_name

        
        # upload image
        ups = uploadData("#{DIRNAME}/#{image_name}", 1, TRIES) # 1 file per gel
        ups = [Upload.find(1)] if debug
        
        # associate to gel, plan, op 
        # can't associate to outputs yet because they are only made if lengths are verified
        up=nil
        if(!(ups.nil?))
          up=ups[0]

          gel_item = Item.find(gel.id)

          # associate gel image to gel
          gel_item.associate image_name, "successfully imaged gel", up
          
          grouped_ops.each do |op| # associate to all operations connected to gel
            # description of where this op is in the gel, to be used as desc tag for image upload
            location_in_gel = "#{op.input(FRAGMENT).sample.name} is in row #{op.input(FRAGMENT).row + 1} and column #{op.input(FRAGMENT).column + 1}"
            
            # associate image to op with a location description
            op.associate image_name, location_in_gel, up
            
            # associate image to plan, or append new location to description if association already exists
            existing_assoc = op.plan.get(image_name)
            if existing_assoc && op.plan.upload(image_name) == up
                op.plan.modify(image_name, existing_assoc.to_s + "\n" + location_in_gel, up)
            else
                op.plan.associate image_name, location_in_gel , up
            end
          end
        end
        
        # check lengths of fragments in gel
        check_frag_length gel, grouped_ops
        # grouped_ops.map { |op| op.temporary[:correct] = CORRECT.rotate!.first } if debug
        
        
        # check whether fragment matched length
        grouped_ops.each { |op|
          if(op.temporary[:correct].upcase.start_with?("N"))
            op.error :incorrect_length, "The fragment did not match the expected length."
          end
        }
        
        # get grouped_ops that have not errored
        
        grouped_ops.select! { |op| op.status == "running"  }

        # show { note "Making the following ops: #{grouped_ops.map { |op| op.id }}"}
        grouped_ops.make    # contains only running ops from here on !!!
        # show { note "#{grouped_ops.map { |op| op.output(FRAGMENT_OUT).item }}" }

        
        if(grouped_ops.any?)
          # cut fragments
          cut_fragments grouped_ops  

          # weigh fragments
          weigh_fragments grouped_ops
         
          # associate gel image, fragment lane with fragment and weight with the gel slices to output
          grouped_ops.each { |op|
            op.output(FRAGMENT_OUT).item.associate(image_name, "Your fragment is in row #{op.input(FRAGMENT).row + 1} and column #{op.input(FRAGMENT).column + 1}", up) 
            op.output(FRAGMENT_OUT).item.associate(:weight, op.temporary[:weight]) 
          }
          
        else 
          # do we want this? ask cami/sam
          show {
            title "Your lucky day!"
            note "No fragments to extract from gel #{gel}."
          }
        end # grouped_ops.any?
        
        # clean up after gel
        clean_up gel, gels
        
        # delete collection
        gel.mark_as_deleted
          
      } # gels.each
      
      ok_ops=operations.running
      operations=ok_ops
  
      # are we cleaning from gel now?
      choice = show {
        title "What Next?"
        select ["Yes", "No"], var: "choice", label: "Would you like to purify the gel slices immediately?", default: 0
      }
      plans = operations.map { |op| op.plan }.uniq
      plans.each { |plan|
        plan.associate :choice, choice[:choice]
      }
      if(choice[:choice] == "Yes")
        show {
          title "Keep Gel Slices"
          note "Keep the gel slices #{operations.map{ |op| op.output(FRAGMENT_OUT).item}.to_sentence} on your bench to use in the next protocol."
        }
      else
        operations.store
      end
      
      get_protocol_feedback
      return {}
    end
    
    # This method instructs the technician to image the given gel.
    def image_gel gel, image_name
      show do
        title "Image gel #{gel}"
        check "Clean the transilluminator with ethanol."
        check "Put the gel #{gel} on the transilluminator."
        check "Turn off the room lights before turning on the transilluminator."
        check "Put the camera hood on, turn on the transilluminator and take a picture using the camera control interface on computer."
        check "Check to see if the picture matches the gel before uploading."
        check "Rename the picture you just took exactly as <b>#{image_name}</b>."
      end
    end
    
    # This method tells the technician to verify fragment lengths for the given gel.
    def check_frag_length gel, grouped_ops
      show {
        title "Verify Fragment Lengths for gel #{gel}"
        table grouped_ops.start_table
          .custom_column(heading: "Gel ID") { |op| op.input(FRAGMENT).item.id }
          .custom_column(heading: "Row") { |op| op.input(FRAGMENT).row + 1 }
          .custom_column(heading: "Column", checkable: true) { |op| op.input(FRAGMENT).column + 1 }
          .custom_column(heading: "Expected Length") { |op| op.output(FRAGMENT_OUT).sample.properties["Length"] }
          .get(:correct, type: 'text', heading: "Does the band match the expected length? (y/n)", default: 'y')
          .custom_column(heading: "User") { |op| op.user.name }
          .custom_column(heading: "Fragment Name") { |op| op.output(FRAGMENT_OUT).sample.name }
        .end_table
      }
    end   
    
    # This method instructs the technician to cut out fragments associated to the given operations.
    def cut_fragments grouped_ops  
      show {
        title "Cut Out Fragments"
        note "Take out #{grouped_ops.length} 1.5 mL tubes and label accordingly: #{grouped_ops.map { |op| "#{op.output("Fragment").item}" }.to_sentence}"
        note "Now, cut out the bands and place them into the 1.5 mL tubes according to the following table:"
        table grouped_ops.start_table 
          .custom_column(heading: "Gel ID") { |op| "#{op.input(FRAGMENT).item}" }
          .custom_column(heading: "Row") { |op| op.input(FRAGMENT).row + 1 }
          .custom_column(heading: "Column", checkable: true) { |op| op.input(FRAGMENT).column + 1 }
          .custom_column(heading: "1.5 mL Tube ID") { |op| "#{op.output(FRAGMENT_OUT).item}" }
          .custom_column(heading: "Length") { |op| op.output(FRAGMENT_OUT).sample.properties["Length"] }
        .end_table
      }
    end
    
    # This method instructs the technician to weigh gel slices.
    def weigh_fragments grouped_ops
      show {
        title "Weigh Gel Slices"
        note "Perform this step using the scale inside the gel room."
        check "Zero the scale with an empty 1.5 mL tube."
        check "Weigh each slice and enter the weights in the following table:"
        table grouped_ops.start_table
          .custom_column(heading: "1.5 mL Tube ID") { |op| "#{op.output(FRAGMENT_OUT).item}" }
          .get(:weight, type: 'number', heading: "Weight (g)",  default: MIN_WEIGHT)
          .end_table
      }
    end
    
    # This method instructs the technician to clean up and dispose of gels.
    def clean_up gel, gels
      show {
        title "Clean Up"
        check "Turn off the transilluminator."
        check "Dispose of the gel #{gel} and any gel parts by placing it in the waste container. Spray the surface of the transilluminator with ethanol and wipe until dry using a paper towel."
        check "Clean up the gel box and casting tray by rinsing with water. Return them to the gel station."
        if(gel==gels.last)
            check "Dispose gloves after leaving the room."
        end
      }
    end
end

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object_types:
  - {name: TB Overnight of Plasmid, description: An overnight of E. coli transformed with a plasmid in TB + antibiotic, handler: sample_container, unit: Plasmid, release_method: return, prefix: DFO, sample_type_name: Plasmid}
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operation_type: Make Miniprep
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 495, stop: 570, days: ["Mo","Tu","We","Th","Fr","Sa"], active: true}
field_types:
  - {ftype: sample, role: input, name: Plasmid, sample_types: [Plasmid], object_types: [TB Overnight of Plasmid], routing: P}
  - {ftype: sample, role: output, name: Plasmid, sample_types: [Plasmid], object_types: [Plasmid Stock], routing: P}
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documentation:
Purifies overnight and creates an unverified plasmid stock for later use.

The overnight is purified by the technician, an the end product is an unverified plasmid stock, which will be sent out for sequencing. The overnight is stored in the fridge, for use later in **Make Glycerol Stock**.

Ran the day after **Make Overnight Suspension** and is a precursor to **Send to Sequencing**.

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cost_model:
def cost(op)
  { labor: 11.65, materials: 1.53  }
end

protocol:
needs "Cloning Libs/Cloning"
needs "Standard Libs/Feedback"

class Protocol
  include Feedback
  include Cloning

  def main
    # Find all overnights and take them
        operations.retrieve

    # Verify whether each overnight has growth
        verify_growth = show do
            title "Check if overnights have growth"
            note "Choose No for the overnight that does not have growth and throw them away or put in the clean station."
            operations.each do |op|
                item_id = op.input("Plasmid").child_item.id
                select ["Yes", "No"], var: "#{item_id}", label: "Does tube #{item_id} have growth?"
            end
        end
        
    # if no growth, delete the overnight    
        operations.each do |op|
            item = op.input("Plasmid").child_item
            if verify_growth["#{item.id}".to_sym] == "No"
                item.mark_as_deleted
                op.error :no_growth, "The overnight has no growth." 
            end
        end
        
    operations.running.make
    
    #transfer each overnight into 1.5 mL tube
        show do 
            title "Transfer Overnights into 1.5 mL Tubes"
            note "Grab #{operations.length} 1.5 mL tubes and label from 1 to #{operations.length}"
            note "Transfer 1.5 mL of the overnight into the corresponding 1.5 mL tube."
            index = 0
            table operations.start_table
                .input_item("Plasmid")
                .custom_column(heading: "Tube Number") { index = index + 1 }
            .end_table
        end
        
    #Spin down cells and remove supernatant
        show do 
           title "Spin down the cells"
           check "Spin at 5,800 xg for 2 minutes, make sure to balance."
           check "Remove the supernatant. Pour off the supernatant into liquid waste, being sure not to upset the pellet. Pipette out the residual supernatant."
        end
        
    # Resuspend in P1, P2, N3
        show do
          title "Resuspend in P1, P2, N3"
          check "Add 250 uL of P1 into each tube and vortex strongly to resuspend."
          check "Add 250 uL of P2 and gently invert 5-10 times to mix, tube contents should turn blue."
          check "Pipette 350 uL of N3 into each tube and gently invert 5-10 times to mix. Tube contents should turn colorless."
          warning "Time between adding P2 and N3 should be minimized. Cells should not be exposed to active P2 for more than 5 minutes"
        end

    # Centrifuge and add to miniprep columns        
        show do
            title "Centrifuge and add to columns"
            check "Spin tubes at 17,000 xg for 10 minutes"
            warning "Make sure to balance the centrifuge."
            check "Grab #{operations.running.length} blue miniprep spin columns and label with 1 to #{operations.running.length}."
            check "Remove the tubes from centrifuge and carefully pipette the supernatant (up to 750 uL) into the same labeled columns."
            warning "Be careful not to disturb the pellet."
            check "Discard the used 1.5 mL tubes into waste bin."
        end
        
    # Spin and wash        
        show do 
            title "Spin and Wash"
            check "Spin all columns at 17,000 xg for 1 minute. Make sure to balance."
            check "Remove the columns from the centrifuge and discard the flow through into a liquid waste container"
            check "Add 750 uL of PE buffer to each column. Make sure the PE bottle that you are using has ethanol added!"
            check "Spin the columns at 17,000 xg for 1 minute"
            check "Remove the columns from the centrifuge and discard the flow through into a liquid waste container."
            check "Perform a final spin: spin all columns at 17,000 xg for 1 minute."
        end

    #Elute w water
        show do 
            title "Elute with water"
            check "Grab  #{operations.length} new 1.5 mL tubes and label top of the tube with 1 to  #{operations.length}."
            check "Remove the columns from the centrifuge"
            check "Inidividually take each column out of the flowthrough collector and put it into the labeled 1.5 mL tube with the same number, discard the flowthrough collector."
            warning "For this step, use a new pipette tip for each sample to avoid cross contamination"
            check "Pipette 50 uL of water into the CENTER of each column"
            check "Let the tubes sit on the bench for 2 minutes"
            check "Spin the columns at 17,000 xg for 1 minute"
            check "Remove the tubes and discard the columns"    
        end 
        
    # Relabel tubes w output ids
        show do 
            title "Relabel Tubes"
            note "Relabel each tube with the corresponding item ID"
            index = 0
            table operations.start_table 
                .custom_column(heading: "Tube Number") { index = index + 1 }
                .output_item("Plasmid")
            .end_table
        end
    
    # nanodrop and get concentration
        show do 
            title "Nanodrop and Enter Concentration"
            note "Nanodrop each plasmid and enter the concentration below"
            table operations.start_table
                .output_item("Plasmid")
                .get(:concentration, type: "number", heading: "Concentration", default: 200)
            .end_table
        end
        
    # set concentration of plasmid stock and change location of overnights
        operations.running.each do | op |
            op.set_output_data "Plasmid", :concentration, op.temporary[:concentration]
            op.set_output_data "Plasmid", :from, op.input("Plasmid").item.id
            op.plan.associate "overnight_#{op.input("Plasmid").sample.id}", op.input("Plasmid").item.id
            op.plan.associate :plasmid, op.output("Plasmid").item.id
            op.input("Plasmid").child_item.store
                    
            pass_data "sequencing results", "sequence_verified", from: op.input("Plasmid").item, to: op.output("Plasmid").item
        end
         
        operations.running.store
        
        get_protocol_feedback()
        
        return {}
    
  end

end

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object_types:
  - {name: Plasmid Glycerol Stock, description: Glycerol Stock of E. coli (usually DH5alpha) containing plasmid DNA stock, handler: sample_container, unit: Plasmid, release_method: return, prefix: M80, sample_type_name: Plasmid}
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operation_type: Make Overnight Suspension
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 900, stop: 1050, days: ["Su","Mo","Tu","We","Th","Fr"], active: true}
field_types:
  - {ftype: sample, role: input, name: Plasmid, sample_types: [Plasmid, Plasmid], object_types: [Checked E coli Plate of Plasmid, Plasmid Glycerol Stock], routing: P}
  - {ftype: sample, role: output, name: Overnight, sample_types: [Plasmid], object_types: [TB Overnight of Plasmid], routing: P}
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documentation:
Selects a colony from a transformed E. coli plate of cells and makes overnight suspension.

Once the plate with transformed E. coli cells has been checked, the technician will pick out a colony and suspend it in either TB + Amp or TB + Kan. The suspension is then inoculated overnight in the 37 F shaker incubator.

Ran after **Check Plate** and is a precursor to **Make Miniprep**.

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cost_model:
#TODO: Multiple overnight suspension/plate protocols
#Specific to Miniprep(?)
def cost(op)
  { labor: 3.88, materials: 0.86 }
end

protocol:
# Note: This change (08/22/2018) reverts back to July 26, 2018 version

needs "Cloning Libs/Cloning"
needs "Standard Libs/Debug"
needs "Standard Libs/Feedback"

class Protocol

  include Feedback    
  include Cloning
  include Debug

  def main
      
    operations.retrieve(interactive: false)
    
    # Increase the number of colonies picked the plate. If no picked number is present,
    # set it equal to one. Note that setting the status to "error" will remove the operation
    # from operations.running, so it will not be listed in tables, etc.
    operations.select { |op| op.input("Plasmid").item.object_type_id == ObjectType.where(name: "Checked E coli Plate of Plasmid").first.id }.each do |op|
       nc = (op.input_data "Plasmid", :num_colonies).to_i
       np = (op.input_data "Plasmid", :num_picked).to_i
       if debug && !nc && rand(2) == 1
         op.set_input_data "Plasmid", :num_colonies, 1
         op.set_input_data "Plasmid", :num_picked, 1
       elsif !nc || nc == 0 || ( np && np >= nc )
         op.error :missing_data, "No colonies left on plate or colony number not defined"
       else
         op.set_input_data "Plasmid", :num_picked, (np || 0) + 1
       end
    end
    
    # Error out operations whose samples don't have bacterial marker data. Tell technician
    # which ones are not being used. Quit if there are no samples left.
    operations.each do |op|
      unless op.input("Plasmid").child_sample.properties["Bacterial Marker"]
        if debug && rand(2) == 1
          op.input("Plasmid").child_sample.set_property "Bacterial Marker", "Amp"
        else
          op.set_status "error"
          op.associate :missing_marker, "No bacterial marker associated with plasmid"
        end
      end
    end
    
    operations.make
    
    p_ot = ObjectType.where(name: "Checked E coli Plate of Plasmid").first 
    
    raise "Could not find object type 'Checked E coli Plate of Plasmid'" unless p_ot
    
    plate_inputs = operations.running.select { |op| op.input("Plasmid").item.object_type_id == p_ot.id }
    
    g_ot = ObjectType.where(name: "Plasmid Glycerol Stock").first 
    
    raise "Could not find object type 'Plasmid Glycerol Stock'" unless g_ot 
    
    glycerol_stock_inputs = operations.running.select { |op| op.input("Plasmid").item.object_type_id == g_ot.id }
    
    overnight_steps plate_inputs, "Checked E coli Plate of Plasmid" if plate_inputs.any?
    overnight_steps glycerol_stock_inputs, "Plasmid Glycerol Stock" if glycerol_stock_inputs.any?
    
    # Associate input id with from data for overnight.
    operations.running.each do |op|
      gs = op.input("Plasmid").item
      on = op.output("Overnight").item
      
      on.associate :from, gs.id
      pass_data "sequencing results", "sequence_verified", from: gs, to: on
    end
    
    operations.running.each do |op|
      op.output("Overnight").child_item.move "37 C shaker incubator"
    end
    
    operations.store
    
    return {}

  end 
  
  # This method sorts operations by the bacterial marker attribute and then
  # starts overnight steps by calling the methods label_load_tubes and inoculate.
  def overnight_steps(ops, ot)
    if ot == "Plasmid Glycerol Stock"
      ops.retrieve interactive: false
    else
      ops.retrieve
    end
    
    # Sorting ops by the bacterial marker attribute
    temp = ops.sort do |op1,op2|
      op1.input("Plasmid").child_sample.properties["Bacterial Marker"].upcase <=> op2.input("Plasmid").child_sample.properties["Bacterial Marker"].upcase
    end
    ops = temp
    
    ops.extend(OperationList)
   
    #Label and load overnight tubes 
    label_load_tubes ops

    #Inoculation
    inoculate ot, ops
      
  end
  
  # Given operations, tells the technician to label and load the tubes the tubes
  def label_load_tubes ops
    show do
      title "Label and load overnight tubes"
      note "In the Media Bay, collect #{ops.length} 14mL tubes"
      note "Write the overnight id on the corresponding tube and load with the correct media type."
      table ops.start_table
        .output_item("Overnight", checkable: true)
        .custom_column(heading: "Media") { |op| "TB+" + op.input("Plasmid").child_sample.properties["Bacterial Marker"].upcase }
        .custom_column(heading: "Quantity") { |op| "3 mL" }
        .end_table
    end
  end
  
  # Tells the technician to inoculate colonies from plate into 14 ml tubes.
  def inoculate ot, ops
    show {
      title "Inoculation from #{ot}"
      note "Use 10 uL sterile tips to inoculate colonies from plate into 14 mL tubes according to the following table." if ot == "Checked E coli Plate of Plasmid"
      check "Mark each colony on the plate with corresponding overnight id. If the same plate id appears more than once in the table, inoculate different isolated colonies on that plate." if ot == "Checked E coli Plate of Plasmid"
      note "Use 100 uL pipette to inoculate cells from glycerol stock into the 14 mL tube according to the following table." if ot == "Plasmid Glycerol Stock"
      table ops.start_table
        .input_item("Plasmid", heading: ot)
        .custom_column(heading: "#{ot} Location") { |op| op.input("Plasmid").item.location }
        .output_item("Overnight", checkable: true)
        .end_table      
    } 
  end
end 

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object_types:
  - {name: Primer Aliquot, description: Primers at low concentration (10uM) for every day use, handler: sample_container, data: { "measure": { "type": "concentration", "unit": "micromolar" } }, unit: Primer, release_method: return, prefix: M20, sample_type_name: Primer}
  - {name: 1 ng/µL Plasmid Stock, description: Diluted stock for use as a template in PCR, handler: sample_container, unit: Plasmid, release_method: query, release_description: If this is an aliquot for the "Transformation Efficiency Project", dispose of it. Otherwise, return it., prefix: M20, sample_type_name: Plasmid}
  - {name: 1 ng/µL Fragment Stock, description: A diluted fragment stock to use as a PCR template, handler: sample_container, unit: Fragment, release_method: return, prefix: M20, sample_type_name: Fragment}
  - {name: Unverified Plasmid Stock, description: A plasmid stock that has yet to be sequenced verified, handler: sample_container, unit: Plasmid, release_method: return, prefix: M20, sample_type_name: Plasmid}
  - {name: 50X PCR Template, description: DNA at an appropriate concentration to be used at 1 µl in a 50 µl PCR, handler: sample_container, unit: DNA Library, release_method: return, prefix: M20, sample_type_name: DNA Library}
  - {name: Unverified PCR Fragment, description: An amplicon that has not been verified after a polymerization experiment, handler: sample_container, unit: Fragment, release_method: return, prefix: M20, sample_type_name: Primer}
  - {name: Stripwell, description: Stripwell, handler: collection, data: { "materials": 10.48, "labor": 10 }, unit: stripwell, release_method: query, rows: 1, columns: 12}
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operation_type: Make PCR Fragment
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 870, stop: 930, days: ["Mo","Tu","We","Th","Fr"], active: true}
field_types:
  - {ftype: sample, role: input, name: Forward Primer, sample_types: [Primer], object_types: [Primer Aliquot], routing: FP}
  - {ftype: sample, role: input, name: Reverse Primer, sample_types: [Primer], object_types: [Primer Aliquot], routing: RP}
  - {ftype: sample, role: input, name: Template, sample_types: [Plasmid, Fragment, Plasmid, Fragment, Plasmid, Plasmid, DNA Library, Fragment], object_types: [1 ng/µL Plasmid Stock, Fragment Stock, Plasmid Stock, 1 ng/µL Fragment Stock, Unverified Plasmid Stock, Gibson Reaction Result, 50X PCR Template, Unverified PCR Fragment], routing: T}
  - {ftype: sample, role: output, name: Fragment, sample_types: [Fragment], object_types: [Stripwell], part: true, routing: F}
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documentation:
Makes PCR fragment from primers.

In this protocol, the technician combines primers and templates with a master mix
in a stripwell. They then run the PCR in a thermocycler.

Ran after **Extract Fragment** and before **Assemble Plasmid**.

precondition:
def validate_property sample, field_name
  validation_block = Proc.new
  property = sample.properties[field_name]
  if property.nil?
    raise "Could not find property #{field_name}"
  end
  validation_block.call(sample, property)
end

# Appends associates msgs to plan and operation
def precondition_warnings op, msgs, key=:precondition_warnings, sep=";"
  plan = op.plan
  if plan
    plan_msg = op.plan.get key
    plan_msgs = plan_msg.split(sep).map { |x| x.strip } if plan_msg
  end
  plan_msgs ||= []
  op_msgs = []

  msgs.each { |valid, m|
    if valid
      plan_msgs.delete(m)
    else
      plan_msgs << m
      op_msgs << m
    end
  }
  op_msgs.uniq!
  plan_msgs.uniq!

  op.associate key, op_msgs.join(sep + " ")
  op.plan.associate key, plan_msgs.join(sep + " ") if op.plan
end

def precondition(op)
  ready = true
  msgs = []
  
  #output fragment must have length!
  if op.output("Fragment").sample.properties["Length"].nil? || op.output("Fragment").sample.properties["Length"] <= 0
      op.associate("Output Fragment must have a defined length!", "")
      return false
  end

  # Validate sample, valid_block, valid_message
  ["Forward Primer", "Reverse Primer"].each do |n|
    sample = op.input(n).sample

    msgs << validate_property(sample, "T Anneal") { |s, property|
      validator = Proc.new { |p| p.to_f.between?(0.01, 100) }
      msg = "T Anneal #{property} for Primer \"#{s.name}\" is invalid"
      [validator.call(property), msg]
    }
  end
  msgs.select! { |valid, m| !valid }
  msgs.compact!
  precondition_warnings op, msgs
  ready = false if msgs.any?
  ready
end

cost_model:
# Make PCR Fragment Cost Model

def cost(op)
    {
        materials: 1.23,
        labor: 6.45
    }      
end

protocol:
needs "Cloning Libs/Cloning"
needs 'PCR Libs/GradientPcrBatching'
needs 'Standard Libs/Debug'
needs 'Standard Libs/Feedback'

class Protocol
    
  # I/O
  FWD = "Forward Primer"
  REV = "Reverse Primer"
  TEMPLATE = "Template"
  FRAGMENT = "Fragment"
  
  # other
  SEC_PER_KB = 30 # sec, extension timer per KB for KAPA
  
  # get the gradient PCR magic
  include Cloning
  include GradientPcrBatching
  include Debug
  include Feedback

  def main
     
    # grab all necessary items
    dilute_stocks_and_retrieve TEMPLATE
    kapa_stock_item = find(:sample, name: "Kapa HF Master Mix")[0].in("Enzyme Stock")[0]
    take [kapa_stock_item], interactive: true,  method: "boxes"
    
    #check the volumes of input primers for all operations, and ensure they are sufficient
    operations.each { |op| op.temporary[:primer_vol] = 2.5 }
    check_volumes [FWD, REV], :primer_vol, :make_aliquots_from_stock, check_contam: true
    
    # build a pcrs hash that groups pcr by T Anneal
    pcrs = build_pcrs_hash

    # show the result of the binning algorithm
    pcrs.each_with_index do |pcr, idx|
      show { title "pcr #{idx}"}
      log_bin_info pcr
    end if debug

    # generate a table for stripwells
    stripwell_tab = build_stripwell_table pcrs
    
    # prepare and label stripwells for PCR
    prepare_stripwells stripwell_tab
    
    # add templates to stripwells for pcr
    load_templates pcrs
    
    # add primers to stripwells
    load_primers pcrs

    # add kapa master mix to stripwells
    add_mix stripwell_tab, kapa_stock_item
    
    # run the thermocycler
    start_pcr pcrs
    
    # store 
    operations.running.store io: "input", interactive: true, method: "boxes"
    release [kapa_stock_item], interactive: true
    
    get_protocol_feedback
    
    return {batches: pcrs}
  end
  
  # dilute to 1ng/uL stocks if necessary
  def dilute_stocks_and_retrieve input
  
    # only use inputs that haven't been diluted and that don't have diluted stocks already
    ops_w_undiluted_template = operations.reject { true }
    operations.each do |op|
        next if op.input(input).object_type.name.include?("1 ng/µL") || op.input(input).object_type.name.include?("50X PCR Template") || op.input(input).object_type.name.include?("Unverified PCR Fragment")
        
        sample = op.input(input).sample
        ot_name = op.input(input).object_type.name.include?("Unverified") ? "1 ng/µL Plasmid Stock" : "1 ng/µL " + sample.sample_type.name + " Stock"
        diluted_stock = sample.in(ot_name).first
        
        if diluted_stock
            op.input(input).set item: diluted_stock
        else
            new_stock = produce new_sample sample.name, of: sample.sample_type.name, as: ot_name
            op.temporary[:diluted_stock] = new_stock
            
            ops_w_undiluted_template.push op
        end
    end
    
    # retrieve operation inputs (doesn't include the stocks replaced by diluted stocks above)
    ops_w_undiluted_template.retrieve
    
    # all stocks may be diluted already
    if ops_w_undiluted_template.empty?
        operations.retrieve
        return
    end
    
    # ensure concentrations
    check_concentration ops_w_undiluted_template, input
    
    # dilute stocks
    show do
      title "Make 1 ng/µL Template Stocks"
      
      check "Grab #{ops_w_undiluted_template.length} 1.5 mL tubes, label them with #{ops_w_undiluted_template.map { |op| op.temporary[:diluted_stock].id }.join(", ")}"
      check "Add template stocks and water into newly labeled 1.5 mL tubes following the table below"
      
      table ops_w_undiluted_template
          .start_table
          .custom_column(heading: "Newly-labeled tube") { |op| op.temporary[:diluted_stock].id }
          .input_item(input, heading: "Template stock, 1 uL", checkable: true)
          .custom_column(heading: "Water volume", checkable: true) { |op| op.input(input).item.get(:concentration).to_f - 1 }
          .end_table
      check "Vortex and then spin down for a few seconds"
    end
    
    # Add association from which item the 1ng/ul dilution came from
    ops_w_undiluted_template.map { |op| op.temporary[:diluted_stock].associate(:diluted_from, op.input(input).item.id) }
    

    # return input stocks
    release ops_w_undiluted_template.map { |op| op.input(input).item }, interactive: true, method: "boxes"
    
    # retrieve the rest of the inputs
    operations.reject { |op| ops_w_undiluted_template.include? op }.retrieve
    
    # set diluted stocks as inputs
    ops_w_undiluted_template.each { |op| op.input(input).set item: op.temporary[:diluted_stock] }
  end
  
  
  # TODO dilute from stock if item is aliquot
  # Callback for check_volume.
  # takes in lists of all ops that have input aliquots with insufficient volume, sorted by item,
  # and takes in the inputs which were checked for those ops.
  # Deletes bad items and remakes each from primer stock
  def make_aliquots_from_stock bad_ops_by_item, inputs
    # bad_ops_by_item is accessible by bad_ops_by_item[item] = [op1, op2, op3...]
    # where each op has a bad volume reading for the given item
    
    # Construct list of all stocks needed for making aliquots. Error ops for which no primer stock is available
    # for every non-errored op that has low item volume,
    # replace the old aliquot item with a new one. 
    aliquots_to_make = 0
    stocks = []
    ops_by_fresh_item = Hash.new(0)
    stock_table = [["Primer Stock ID", "Primer Aliquot ID"]]
    transfer_table = [["Old Aliquot ID", "New Aliquot ID"]]
    bad_ops_by_item.each do |item, ops|
      stock = item.sample.in("Primer Stock").first ######## items is a string?
      if stock.nil?
        ops.each { |op| op.error :no_primer, "You need to order a primer stock for primer sample #{item.sample.id}." }
        bad_ops_by_item.except! item
      else
        stocks.push stock
        aliquots_to_make += 1
        item.mark_as_deleted
        fresh_item = produce new_sample item.sample.name, of: item.sample.sample_type.name, as: item.object_type.name
        bad_ops_by_item.except! item
        ops_by_fresh_item[fresh_item] = ops
        ops.each do |op| 
          input = inputs.find { |input| op.input(input).item == item }
          op.input(input).set item: fresh_item
        end
        stock_table.push [stock.id, {content: fresh_item.id, check: true}]
        if item.get(:contaminated) != "Yes"
          transfer_table.push [item.id, {content: fresh_item.id, check: true}]    
        end
      end
    end
    
    bad_ops_by_item.merge! ops_by_fresh_item
    take stocks, interactive: true
    
    # label new aliquot tubes and dilute
    show do 
      title "Grab 1.5 mL tubes"
      
      note "Grab #{aliquots_to_make} 1.5 mL tubes"
      note "Label each tube with the following ids: #{bad_ops_by_item.keys.map { |item| item.id }.sort.to_sentence}"
      note "Using the 100 uL pipette, pipette 90uL of water into each tube"
    end
  
    # make new aliquots
    show do 
      title "Transfer primer stock into primer aliquot"
      
      note "Pipette 10 uL of the primer stock into the primer aliquot according to the following table:"
      table stock_table
    end
    
    
    if transfer_table.length > 1
      show do
        title "Transfer Residual Primer"
        
        note "Transfer primer residue from the low volume aliquots into the fresh aliquots according to the following table:"
        table transfer_table
      end
    end
    
    release stocks, interactive: true
  end
  
  # build a pcrs hash that groups pcr by T Anneal
  def build_pcrs_hash
    
    pcr_operations = operations.map do |op|
      PcrOperation.new({
        extension_time: op.output(FRAGMENT).sample.properties["Length"] * SEC_PER_KB / 1000,
        anneal_temp: min(op.input(FWD).sample.properties["T Anneal"], op.input(REV).sample.properties["T Anneal"]),
        unique_id: op.id
      })
    end

    result_hash = batch(pcr_operations)
    pcr_reactions = []
    result_hash.each do |thermocycler_group, row_groups|
      reaction = {}
      extension_time = thermocycler_group.max_extension + 60
      reaction[:mm], reaction[:ss] = (extension_time.to_i).divmod(60)
      reaction[:mm] = "0#{reaction[:mm]}" if reaction[:mm].between?(0, 9)
      reaction[:ss] = "0#{reaction[:ss]}" if reaction[:ss].between?(0, 9)
      
      reaction[:ops_by_bin] = {}
      sorted_rows = row_groups.to_a.sort { |a,b| a.min_anneal <=> b.min_anneal }
      sorted_rows.each do |row_group|
          reaction[:ops_by_bin][row_group.min_anneal.round(1)] = [].extend(OperationList)
          row_group.members.sort { |a,b| a.anneal_temp <=> b.anneal_temp }.each do |pcr_op|
            reaction[:ops_by_bin][row_group.min_anneal.round(1)] << (Operation.find(pcr_op.unique_id))
          end
      end
      
      # trim bin if we cant fit all rows into one thermocycler
      while reaction[:ops_by_bin].keys.size > 8
        extra_ops = reaction[:ops_by_bin][reaction[:ops_by_bin].keys.last]
        extra_ops.each do |op|
            op.error :batching_issue, "We weren't able to batch this operation into a running thermocycler for this Job, try again."
        end
        reaction[:ops_by_bin].except(reaction[:ops_by_bin].keys.last)
      end
      
      reaction[:bins] = reaction[:ops_by_bin].keys
      reaction[:stripwells] = []
      reaction[:ops_by_bin].each do |bin, ops|
          ops.make
          reaction[:stripwells] += ops.output_collections[FRAGMENT]
      end
      pcr_reactions << reaction
    end
    pcr_reactions
  end
  
  # generate a table for stripwells
  def build_stripwell_table pcrs
    stripwells = pcrs.collect { |pcr| pcr[:stripwells] }.flatten
    stripwell_tab = [["Stripwell", "Wells to pipette"]] + stripwells.map { |sw| ["#{sw.id} (#{sw.num_samples <= 6 ? 6 : 12} wells)", { content: sw.non_empty_string, check: true }] }
  end
  
  # prepare and label stripwells for PCR
    def prepare_stripwells stripwell_tab
    show do
      title "Label and prepare stripwells"
      
      note "Label stripwells, and pipette 19 uL of molecular grade water into each based on the following table:"
      table stripwell_tab
      stripwell_tab
    end
  end
  
  # add templates to stripwells for pcr
  def load_templates pcrs
    pcrs.each_with_index do |pcr, idx|
      show do
        title "Load templates for PCR ##{idx + 1}"
        
        pcr[:ops_by_bin].each do |bin, ops|
          table ops
              .start_table
              .output_collection(FRAGMENT, heading: "Stripwell")
              .custom_column(heading: "Well") { |op| op.output(FRAGMENT).column + 1 }
              .input_item(TEMPLATE, heading: "Template, 1 uL", checkable: true)
              .end_table
        end
        warning "Use a fresh pipette tip for each transfer.".upcase
      end
    end
  end
  
  # add primers to stripwells
  def load_primers pcrs
    pcrs.each_with_index do |pcr, idx|
      show do
        title "Load primers for PCR ##{idx + 1}"
        
        pcr[:ops_by_bin].each do |bin, ops|
          table ops.start_table
              .output_collection(FRAGMENT, heading: "Stripwell")
              .custom_column(heading: "Well") { |op| op.output(FRAGMENT).column + 1 }
              .input_item(FWD, heading: "Forward Primer, 2.5 uL", checkable: true)
              .input_item(REV, heading: "Reverse Primer, 2.5 uL", checkable: true)
              .end_table
        end
        warning "Use a fresh pipette tip for each transfer.".upcase
      end
    end
  end
  
  # add kapa master mix to stripwells
  def add_mix stripwell_tab, kapa_stock_item
      show do
          title "Add Master Mix"
          
          note "Pipette 25 uL of master mix (#{kapa_stock_item}) into stripwells based on the following table:"
          table stripwell_tab
          warning "USE A NEW PIPETTE TIP FOR EACH WELL AND PIPETTE UP AND DOWN TO MIX."
          check "Cap each stripwell. Press each one very hard to make sure it is sealed."
      end
  end
  
  # run the thermocycler and update the positions of the stripwells
  def start_pcr pcrs
      pcrs.each_with_index do |pcr, idx|
        is_gradient = pcr[:bins].length > 1
        # log_bin_info pcr # use for debugging bad binning behavior
        resp = show do
          if !is_gradient
            title "Start PCR ##{idx + 1} at #{pcr[:bins].first} C"
            
            check "Place the stripwell(s) #{pcr[:stripwells].collect { |sw| "#{sw}" }.join(", ")} into an available thermal cycler and close the lid."
            get "text", var: "name", label: "Enter the name of the thermocycler used", default: "TC1"
            check "Click 'Home' then click 'Saved Protocol'. Choose 'YY' and then 'CLONEPCR'."
            check "Set the anneal temperature to <b>#{pcr[:bins].first} C</b>. This is the 3rd temperature."
          else
            title "Start PCR ##{idx + 1} (gradient) over range #{pcr[:bins].first}-#{pcr[:bins].last} C"
            check "Click 'Home' then click 'Saved Protocol'. Choose 'YY' and then 'CLONEPCR'."
            check "Click on annealing temperature -> options, and check the gradient checkbox."
            check "Set the annealing temperature range to be #{pcr[:bins].first}-#{pcr[:bins].last} C."
            note "Cancel this PCR batch if something doesn't look right, for example if the thermocycler does not allow this temperature range."
            select ["yes", "no"], var: "batching_bad", label: "Cancel this batch?", default: 1
            note "The following stripwells are ordered front to back."
            
            pcr[:stripwells].map.with_index do |sw, idx|
              temp = pcr[:ops_by_bin].keys[idx].to_f
              check "Place the stripwell #{sw} into a row of the thermocycler with the temperature as close as possible to <b>#{temp} C</b>"
            end
            get "text", var: "name", label: "Enter the name of the thermocycler used", default: "TC1"
          end
          check "Set the 4th time (extension time) to be #{pcr[:mm]}:#{pcr[:ss]}."
          check "Press 'Run' and select 50 uL."
        end
        
        impossible_pcr_handler(pcr) if resp.get_response(:batching_bad) == "yes"
        
        # set the location of the stripwell
        pcr[:stripwells].flatten.each do |sw|
          sw.move resp[:name]
        end
      end
  end
  
  def impossible_pcr_handler(pcr)
      pcr[:ops_by_bin].each do |bin, ops|
          ops.each do |op|
            op.error :batching_issue, "We weren't able to batch this operation into a running thermocycler for this Job, try again."
          end
      end
      pcr[:stripwells].each do |sw|
          sw.mark_as_deleted
      end
      
      show do
        title 'Reaction Canceled'
        note "All operations in this pcr reaction are canceled, try them again in a seperate job."
        note "The other Reactions will go forward as planned."
      end
  end

  def log_bin_info pcr
    show do
      title "bin info"
      note "ops_by_bin"
      pcr[:ops_by_bin].each do |bin, ops|
        opids = ops.map { |op| op.id }
        check "#{bin.to_s}  =>  #{opids.to_s}"
      end

      note "bins"
      pcr[:bins].each do |bin|
        check "#{bin.to_s}"
      end
    end
  end
end

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object_types:
  - {name: Transformed E. coli Aliquot, description: An aliquot containing transformed E. coli - usually in a 1.5 mL tube, handler: sample_container, unit: Plasmid, release_method: dispose, sample_type_name: Plasmid}
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operation_type: Plate Transformed Cells
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 780, stop: 900, days: ["Mo","Tu","We","Th","Fr"], active: true}
field_types:
  - {ftype: sample, role: input, name: Plasmid, sample_types: [Plasmid], object_types: [Transformed E. coli Aliquot], routing: P}
  - {ftype: sample, role: output, name: Plate, sample_types: [Plasmid], object_types: [E coli Plate of Plasmid], routing: P}
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documentation:
Plates transforms cells and incubates them.

The transformed E. coli cells are plated on either LB + Amp or LB + Kan and incubated at 37 F.

Ran after **Transform Cells** and is a precursor to **Check Plate**.

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cost_model:
# Make PCR Fragment Cost Model

def cost(op)
    {
        materials: 0.92,
        labor: 2.27 
    }      
end

protocol:
# Author: Ayesha Saleem
# December 23, 2016

# TO DO 
    # Fire different antibiotic plate depending on which antibiotic it is (e.g., Amp: 30 min, Kan: 1 hr, etc.)
needs "Standard Libs/Feedback"
class Protocol
  include Feedback
  
  def name_initials str
    full_name = str.split
    begin
      cap_initials = full_name[0][0].upcase + full_name[1][0].upcase
    rescue
      cap_initials = ""
    end
    return cap_initials
  end
  
  def grab_plates plates, batch_num, ids, k
    show do
      title "Grab #{plates.length} of #{k} plates"
      note "Grab #{plates.length} plates from batch #{batch_num.join("and")}"
      check "Label the top of the plates with your intials, the date, and the following ids: #{ids.join(", ")}"
    end
  end

  def plate_transformed_aliquots k, aliquots, plates
    # plates_checkable = []
    # plates.each do |plate|
    #   plates_checkable.add({content: plate, check: true})
    # end
    
    plates.each_with_index do |plate, i|
      plates[i] = ({content: plates[i], check: true})
    end
    
    show do 
      title "Plate transformed E coli aliquots"
      check "Use sterile beads to plate THE ENTIRE VOLUME (~200 uL) from the transformed aliquots (1.5 mL tubes) onto the plates, following the table below."
      warning "Note the change in plating volume!"
      check "Discard used transformed aliquots after plating."
      table [["1.5 mL tube", "#{k} Plate"]].concat(aliquots.zip plates)
    end
  end
  
  def spin_tubes
    show do
      title "Spin down tubes and resuspend"
      check "Remove the transformed cells in 1.5 mL tubes from the 250 mL flask."
      check "Centrifuge for 4,000 x g for 1 minute."
      check "Carefully remove most of the supernatant using a P1000 pipette. Leave 200uL of supernatant in each tube."
      check " Resuspend the cells in the remaining supernatant by vortexing."
    end
  end
     
  def group_plates_and_aliquots markers_new
    operations.each do | op | 
      p = op.input("Plasmid").item
      marker_key = "LB"
      p.sample.properties["Bacterial Marker"].split(/[+,]/).each do |marker|
        marker_key = marker_key + " + " + marker.strip[0, 3].capitalize
      end
      
      if Sample.find_by_name(marker_key)
        markers_new[marker_key][p] = op.output("Plate").item
      else
        show do 
          note "#{marker_key}"
        end
        op.error :no_marker, "There is no marker associated with this sample, so we can't plate it. Please input a marker."
      end
    end
    markers_new
  end  
  
  def calculate_and_operate markers
    markers.each do | k, v| 
      aliquots = []
      plates = []
      ids = []
        
      v.each do | al, pl|
        ids.push("#{pl.id} " + name_initials(pl.sample.user.name))
        aliquots.push(al.id)
        al.mark_as_deleted
        plates.push(pl.id)
        pl.location = "#{operations[0].input("Plasmid").sample.properties["Transformation Temperature"]} C incubator"
      end
        
      b = Collection.where(object_type_id: ObjectType.find_by_name("Agar Plate Batch").id)
                        .select { |b| !b.empty? && !b.deleted? && (b.matrix[0].include? Sample.find_by_name(k).id) }.first

      if b.nil? # no agar plate batches exist
        raise "No agar plate batches for #{k} could be found in the Inventory. Pour some plates before continuing (Manager/Pour Plates)"
      end
      batch_num = [b.id]
      n = b.num_samples
      num_p = plates.length
      if n < num_p
        num_p = num_p - n
        b.apportion 10, 10
        b = Collection.where(object_type_id: ObjectType.find_by_name("Agar Plate Batch").id)
                      .select { |b| !b.empty? && !b.deleted? && (b.matrix[0].include? Sample.find_by_name(k).id) }.first
        n = b.num_samples
        batch_num.push(b.id)
      end
          
        m = b.matrix
        x = 0
    
        (0..m.length-1).reverse_each do |i|
          (0..m[i].length-1).reverse_each do |j|
            if m[i][j] != -1 && x < num_p
              m[i][j] = -1
              x += 1
            end
          end
        end
        
        # Grab and label plates
        grab_plates plates, batch_num, ids, k
        
        # Spin down tubes and resuspend
        spin_tubes
        
        # Plate transformed E. coli aliquots
        plate_transformed_aliquots k, aliquots, plates
    end
  end
    
  def main
    operations.retrieve.make
    markers_new = Hash.new { | h, k | h[k] = {} } 
    
    # group plates + transformed aliquots 
    markers = group_plates_and_aliquots markers_new
      
    # tell tech to grab x amount of plates and plate the aliquots
    # also detract from plate batches
    calculate_and_operate markers
    operations.store(io: "output", interactive: true)
    
    get_protocol_feedback
    return {}
    
  end

end

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operation_type: Pour Gel
category: Cloning
deployed: false
on_the_fly: true
timing: {start: 480, stop: 495, days: ["Mo","Tu","We","Th","Fr"], active: true}
field_types:
  - {ftype: sample, role: output, name: Lane, object_types: [50 mL 0.8 Percent Agarose Gel in Gel Box], part: true, routing: G}
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documentation:
Pours a a mixture composing of a gel and GelGreen into a casting tray.

In this protocol, a gel is poured into a flask and is then GelGreen
is added to it. Finally, the gels get poured into a casting tray and then gets labeled on the side of
the gel box.

Is a precursor to **Run Gel**. 

precondition:
def precondition(op)
    if op.plan
      pcrs = op.plan.operations.select { |o|
          o.operation_type.name == "Make PCR Fragment"
      }
      pcrs.length == 0 || pcrs[0].status == 'done'
    else
      true
    end
end

cost_model:
# Pour Gel Cost Model
# On the fly protocol, and only evaluated when the gel is cut so no cost is accrued

def cost(op)
    { materials: 0.86, labor: 0.84 }
end

protocol:
needs "Standard Libs/Feedback"
class Protocol
  include Feedback
  def main
    num_ops = operations.length
    o = operations.first.output("Lane").object_type
    lanes_per_gel = o.rows * o.columns
    
    gels_needed = ( num_ops / 8.0 ).ceil # since four lanes are reserved for ladder
    
    ladder_lanes = ( num_ops / 4.0 ).ceil # since four lanes are reserved for ladder
    
    volume = 35.0
    percentage = 1.0
    mass = ((percentage / 100) * volume).round 2
    error = ( mass * 0.05 ).round 5 
    
    #insert virtual operations at 0, 6, 12, 18, ...
    (0...ladder_lanes).each do |l|
       insert_operation 6*l, VirtualOperation.new
       insert_operation 6*l + 1, VirtualOperation.new
    end
    
    operations.make
    
    # Add the top and bottom combs
    top_bottom_combs
    
    # Given the number of gels needed, mass, and margin of error, pour gels
    pour_gels gels_needed, mass, error
    
    # Add GelGreen
    add_gel_green 
    
    # Pour and label the gels
    pour_label_gels
    
    operations.store(io: "output") 
    #get_protocol_feedback
    return {}
    
  end
  
  # Instructs the technician to set up the gel box and add top and bottom combs.
  def top_bottom_combs
    show do
      title "Set up gel box, and add top and bottom combs"
      check "Set up a 49 mL Gel Box With Casting Tray (clean)"
      check "Retrieve two 6-well purple combs from A7.325"
      check "Position the gel box with the electrodes facing away from you. Add a purple comb to the side and center of the casting tray nearest the side of the gel box."
      check "Put the thick side of the comb down."
      note "Make sure the comb is well-situated in the groove of the casting tray."
      # image "gel_comb_placement"
    end      
  end
  
  # Tells the technician to mix agarose powder and 1X TAE in a graduated cylinder.
  def pour_gels gels_needed, mass, error
    show do
      title "Pour #{gels_needed} gel(s)"
      check "Grab a flask from on top of the microwave M2."
      check "Using a digital scale, measure out #{mass} g (+/- #{error} g) of agarose powder and add it to the flask."
      check "Get a graduated cylinder from on top of the microwave. Measure and add 50 mL of 1X TAE from jug J2 to the flask."
      check "Microwave 70 seconds on high in microwave M2, then swirl. The agarose should now be in solution."
      note "If it is not in solution, microwave 7 seconds on high, then swirl. Repeat until dissolved."
      warning "Work in the gel room, wear gloves and eye protection all the time"
    end
  end
  
  # Tells the technician to add GelGreen to each gel.
  def add_gel_green
    show do
      title "For each gel, Add 5 µL GelGreen"
      note "Using a 10 µL pipetter, take up 5 µL of GelGreen into the pipet tip. Expel the GelGreen directly into the molten agar (under the surface), then swirl to mix."
      warning "GelGreen is supposedly safe, but stains DNA and can transit cell membranes (limit your exposure)."
      warning "GelGreen is photolabile. Limit its exposure to light by putting it back in the box."
      # image "gel_add_gelgreen"
    end
  end
  
  # Tells the technician to pour and label each gel.
  def pour_label_gels
    show do
      title "Pour and label the gel(s)"
      note "Using a gel pouring autoclave glove, pour agarose from one flask into the casting tray. 
            Pour slowly and in a corner for best results. Pop any bubbles with a 10 µL pipet tip. Repeat for each gel"
      operations.output_collections["Lane"].each_with_index do | gel, i |
          check "Write id #{gel.id} on piece of lab tape and affix it to the side of the gel box."
      end
      note "Leave the gel to solidify."
      # image "gel_pouring"
    end
  end

end

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operation_type: Purify Gel Slice
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 630, stop: 720, days: ["Mo","Tu","We","Th","Fr"], active: true}
field_types:
  - {ftype: sample, role: input, name: Gel, sample_types: [Fragment, Plasmid], object_types: [Gel Slice, Gel Slice], routing: F}
  - {ftype: sample, role: output, name: Fragment, sample_types: [Fragment, Plasmid], object_types: [Fragment Stock, Plasmid Stock], routing: F}
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documentation:
Purifies an input gel slice that has been extracted.

Dissolves the extracted gel slice in a QG Buffer and purifies the fragment on a spin column. It then tells
the technician to determine the concentration using a Nanodrop and to record it.

Ran after *Extract Fragment* and before *Make PCR Fragment*

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cost_model:
# Purify Gel Slice Cost Model

def cost(op)
    {
        materials: 1.86,
        labor: 7.43
    }      
end

protocol:
# Purify Gel Protocol

# This protocol purfies gel slices into DNA fragment stocks.
needs "Standard Libs/Feedback"
class Protocol
  include Feedback
  # TODO refactor density parameter name? (see qg_volumes and iso_volumes definitions)
  DENSITY1 = 1.0 / 3000.0
  DENSITY2 = 1.0 / 1000.0
  
  def main
  
    if debug
       operations.shuffle! 
    end
  
    keep_gel_slices = operations.first.plan.get(:choice) == "Yes"
    
    operations.retrieve interactive: (!keep_gel_slices)
    operations.sort! { |op1, op2| op1.input("Gel").item.id <=> op2.input("Gel").item.id }
    operations.make
    
    # While testing, assign a random weight value
    operations.each{ |op| op.set_input_data("Gel", :weight, Random.rand / 2 + 0.1)  } if debug

    operations.each do |op|
        op.temporary[:qg_volume]  = (op.input_data("Gel", :weight).to_f / DENSITY1).floor
        op.temporary[:iso_volume] = (op.input_data("Gel", :weight).to_f / DENSITY2).floor
        op.temporary[:iso_volume] = 0 if op.input("Gel").sample.properties["Length"].between?(500, 4000)
        op.temporary[:total_volume] = op.temporary[:qg_volume] + op.temporary[:iso_volume]
        op.temporary[:is_divided] = op.temporary[:total_volume] >= 2000
    end
    
    move_gel_slices_to_tubes
    
    add_QG_buffer
    
    # Place tubes in a 50 degree heat block
    heat_block
    
    # Distribute melted gel slices between tubes
    distribute_gels
    
    # Add isopropanol
    add_isopropanol
    
    # Prepare the centrifuge
    prepare_centrifuge
    
    # Use the centrifuge to bind DNA to the columns
    centrifuge
    
    # Label the new 1.5 mL tubes
    use_label_printer
    
    # Transfer to the 1.5 ml tube
    transfer_to_tube
    
    #Measure the DNA concentration
    measure_DNA
    
    operations.each do |op|
      # need to check the case where its > 10
      #if operations.output_item("Fragment")
      op.set_output_data("Fragment", :concentration, op.temporary[:conc])
      op.output("Fragment").item.notes =  op.temporary[:note]
    end
    
    # table operations.start_table
    #   .output_item("Fragment")
    #   .get(:conc, type: 'number', heading: "Concentration (ng/uL)", default: 7)
    #   .get(:note, type: 'text', heading: "Notes")
    #   .end_table

    # Decide whether or not to keep the dilute stocks
    choices = get_choices

    discard_fragment_stocks choices
    
    # Let the tech select what concentrations were too low to continue, and mark the gels as deleted.
    select_as_deleted choices
    
    operations.store
    
    get_protocol_feedback
    return {}
    
  end
  
  # This method lets the technician decide whether or not to discard
  # any of the fragment stocks and returns their choices.
  def get_choices
    choices = show do
      title "Decide whether to keep dilute stocks"
      note "The below stocks have a concentration of less than 10 ng/uL."
      note "Talk to a lab manager to decide whether or not to discard the following stocks."
      operations.select{ |op| op.output_data("Fragment", :concentration) < 10}.each do |op|
        select ["Yes", "No"], var: "d#{op.output("Fragment").item.id}", label: "Discard Fragment Stock #{op.output("Fragment").item.id}", default: 1
      end
    end if operations.any?{ |op| op.output_data("Fragment", :concentration) < 10}
    choices #return
  end

  # This method tells the technician to move the gel slices to new tubes.
  def move_gel_slices_to_tubes
    show do
      title "Move gel slices to new tubes"
      note "Please carefully transfer the gel slices in the following tubes each to a new 2.0 mL tube using a pipette tip:"
      table operations.select{|op| op.temporary[:total_volume].between?(1500, 2000)}.start_table
      .input_item("Gel")
      .end_table
      note "Label the new tubes accordingly, and discard the old 1.5 mL tubes."
    end if operations.any? {|op| op.temporary[:total_volume].between?(1500, 2000)}
  end
  
  # This method displays a table of gels and tells the technician to add QG buffer
  # to the corresponding tubes.
  def add_QG_buffer
    show do
      title "Add the following volumes of QG buffer to the corresponding tube."
      table operations.start_table
      .input_item("Gel")
      .custom_column(heading: "QG Volume in uL", checkable: true) { |op| op.temporary[:qg_volume]}
      .end_table
    end
  end
  
  # This method tells the technician to place all tubes in a heat block.
  def heat_block
    show do
      title "Place all tubes in 50 degree heat block"
      timer initial: { hours: 0, minutes: 10, seconds: 0}
      note "Vortex every few minutes to speed up the process."
      note "Retrieve after 10 minutes or until the gel slice is competely dissovled."
    end
  end
  
  # This method tells the technician to distribute melted gel slices equally
  # between tubes. They then need to label the new tubes and discard the old tubes.
  def distribute_gels
    show do
      title "Equally distribute melted gel slices between tubes"
      note "Please equally distribute the volume of the following tubes each between two 1.5 mL tubes:"
      table operations.select{ |op| op.temporary[:is_divided]}.start_table
      .input_item("Gel")
      .end_table
      note "Label the new tubes accordingly, and discard the old 1.5 mL tubes."
    end if operations.any? { |op| op.temporary[:is_divided] }
  end
  
  # This method tells the technician to add isopropanol evenly between two tubes.
  def add_isopropanol
    show do
      title "Add isopropanol"
      note "Add isopropanol according to the following table. Pipette up and down to mix."
      warning "Divide the isopropanol volume evenly between two 1.5 mL tubes #{operations.select{ |op| op.temporary[:is_divided]}.map{ |op| op.input("Gel").item.id}} since you divided one tube's volume into two earlier." if operations.any?{ |op| op.temporary[:is_divided]}
      table operations.select{ |op| op.temporary[:iso_volume] > 0 }.start_table
      .input_item("Gel")
      .custom_column(heading: "Isopropanol (uL)", checkable: true) { |op| op.temporary[:iso_volume]}
      .end_table
    end if operations.any? { |op| op.temporary[:iso_volume] > 0}
  end
   
   # This method tells the technician to prepare the centrifuge.
   def prepare_centrifuge
    show do
      title "Prepare the centrifuge"
      check "Grab #{operations.length} pink Qiagen columns, label with 1 to #{operations.length} on the top."
      check "Add tube contents to LABELED pink Qiagen columns using the following table."
      check "Be sure not to add more than 750 uL to each pink column."
      warning "Vortex QG mixture thoroughly before adding to pink column!".upcase
      table operations.start_table
      .input_item("Gel")
      .custom_column(heading: "Qiagen column") { |op| operations.index(op) + 1}
      .end_table
    end
   end
  
   # This method gives instructions on how to operate the centrifuge.
   def centrifuge
    show do
      title "Centrifuge"
      check "Spin at 17.0 xg for 1 minute to bind DNA to columns"
      check "Empty collection columns by pouring liquid waste into liquid waste container."
      warning "Add the remaining QG mixtures to their corresponding columns, and repeat these first two steps for all tubes with remaining mixture!"
      check "Add 750 uL PE buffer to columns and wait five minutes"
      check "Spin at 17.0 xg for 30 seconds to wash columns."
      check "Empty collection tubes."
      check "Add 500 uL PE buffer to columns and wait five minutes"
      check "Spin at 17.0 xg for 30 seconds to wash columns"
      check "Empty collection tubes."
      check "Spin at 17.0 xg for 1 minute to remove all PE buffer from columns"
    end
    
   end    
   
   # This method tells the technician how to use the label printer.
   def use_label_printer
    show do
      title "Use label printer to label new 1.5 mL tubes"
      check "Ensure that the B33-143-492 labels are loaded in the printer. This number should be displayed on the printer. If not, check with a lab manager."
      check "Open the LabelMark 6 software."
      check "Select \"Open\" --> \"File\" --> \"Serialized data top labels\""
      note "If an error about the printer appears, press \"Okay\""
      check "Select the first label graphic, and click on the number in the middle of the label graphic."
      check "On the toolbar on the left, select \"Edit serialized data\""
      check "Enter #{operations.first.output("Fragment").item.id} for the Start number and #{operations.length} for the Total number, and select \"Finish\""
      check "Select \"File\" --> \"Print\" and select \"BBP33\" as the printer option."
      check "Press \"Print\" and collect the labels."
      image "purify_gel_edit_serialized_data"
      image "purify_gel_sequential"
    end       
   end
   
   # This method tells the technician to transfer pink columns to labeled tubes.
   def transfer_to_tube
    show do
        title "Transfer to 1.5 mL tube"
        check "Grab #{operations.length} 1.5 mL tube(s)."
        check "Apply the labels to the tubes."
        check "Transfer pink columns to the labeled tubes using the following table."
        table operations.start_table
            .custom_column(heading: "Qiagen column") { |op| operations.index(op) + 1 }
            .output_item("Fragment", heading: "1.5 mL tube", checkable: true)
        .end_table
        check "Add 30 uL molecular grade water or EB elution buffer to center of the column."
        warning "Be very careful to not pipette on the wall of the tube."
    end
   end
   
   # This method tells the technician to measure the DNA concentration.
   def measure_DNA
    show do
      title "Measure DNA Concentration"
      check "Elute DNA into 1.5 mL tubes by spinning at 17.0 xg for one minute, keep the columns."
      check "Pipette the flow through (30 uL) onto the center of the column, spin again at 17.0 xg for one minute. Discard the columns this time."
      # check "Go to B9 and nanodrop all of 1.5 mL tubes, enter DNA concentrations for all tubes in the following:"
      table operations.start_table
      .output_item("Fragment")
      .get(:conc, type: 'number', heading: "Concentration (ng/uL)", default: 7)
      .get(:note, type: 'text', heading: "Notes")
      .end_table
    end
   end
   
   # This method takes in a group of fragment stocks and tells the technician to discard
   # any of the fragment stocks that the technician earlier said that needed to be removed.
   def discard_fragment_stocks choices
     if !choices.nil? && choices.any? { |key, val| val == "Yes"}
      show do
        title "Discard fragment stocks"
        note "Discard the following fragment stocks:"
        note operations.select{ |op| choices["d#{op.output("Fragment").item.id}".to_sym] == "Yes"}
          .map{ |op| op.output("Fragment").item.id}
          .join(", ")
      end
     end
   end
   
   # This method takes in a group of fragment stocks and errors the operations
   # that include fragment stocks that have too low of concentrations.
   def select_as_deleted choices
     if !choices.nil?
      operations.select { |op| choices["d#{op.output("Fragment").item.id}".to_sym] == "Yes" }.each do |op|
          frag = op.output("Fragment").item
          op.error :low_concentration, "The concentration of #{frag} was too low to continue"
          frag.mark_as_deleted
      end
    end
    
    operations.each do |op|
      op.input("Gel").item.mark_as_deleted
    end
   end
end

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object_types:
  - {name: Stripwell of Digested Plasmid, description: A stripwell from Restriction Digest used for gel protocols, fragment analyzing, etc., handler: collection, data: { "materials": 10.48, "labor": 10 }, unit: stripwell, release_method: return, prefix: Bench, rows: 1, columns: 12}
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operation_type: Run Gel
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 510, stop: 540, days: ["Mo","Tu","We","Th","Fr"], active: true}
field_types:
  - {ftype: sample, role: input, name: Fragment, sample_types: [Fragment, Plasmid], object_types: [Stripwell, Stripwell of Digested Plasmid], part: true, routing: F}
  - {ftype: sample, role: input, name: Gel, object_types: [50 mL 0.8 Percent Agarose Gel in Gel Box], part: true, routing: L}
  - {ftype: sample, role: output, name: Fragment, sample_types: [Fragment, Plasmid], object_types: [50 mL 0.8 Percent Agarose Gel in Gel Box, 50 mL 0.8 Percent Agarose Gel in Gel Box], part: true, routing: F}
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documentation:
Runs a selected gel through gel electrophoresis.

A 50 mL 1 percent Agarose Gel is loaded with the input samples in preparation for gel electrophoresis. 
The gel is then run at 100 Volts for 40 minutes. This operation type creates "Pour Gel" and
"Extract Fragment" operation associations for later use.

Ran after *Pour Gel* and is a precursor to *Extract Fragment*.

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cost_model:
# Run Gel Cost Model

def cost(op)
    {
        materials: 0.27,
        labor: 2.03
    }      
end

protocol:
#TO DO: 100 BP LADDER ONLY WHEN A FRAGMENT LESS THAN 500 BP ONLY 
needs "Standard Libs/Feedback"
needs "Standard Libs/Units"

class Protocol
    include Feedback
  def main
      
    operations.retrieve interactive: false
    
    # manually set input and outputs so that they ascend in parrellel for id, row, column
    # also returns sorted operationslist
    sorted_ops = align_input_and_output_indicies operations
    operations = sorted_ops
    
    gels = operations.map { |op| op.input("Gel").collection }.uniq
    stripwells = operations.map { |op| op.input("Fragment").collection }.uniq.sort { |sw1, sw2| sw1.id <=> sw2.id }
    
    # Find a ladder
    ladder_100 = Sample.find_by_name("100 bp Ladder")
    ladder_1k = Sample.find_by_name("1 kb Ladder")
    dye = Sample.find_by_name("6X Loading Dye")
    items = [ladder_100.in("Ladder Aliquot").first,
             ladder_1k.in("Ladder Aliquot").first,
             Item.where(sample_id: dye.id).select { |i| !i.deleted? }.first]
    
    take items + gels.collect { |i| Item.find_by_id(i.id) } + stripwells.collect { |i| Item.find_by_id(i.id) }, interactive: true
    
    setup_power_supply
    
    setup_gel_box
    
    add_dye stripwells
    
    #ONLY DO 100 BP IF THERE IS FRAGMENT W LENGTH < 500 BP
    add_ladders_to_gel gels, ladder_1k, ladder_100

    # TO DO: Fix loading if ladders exist
    transfer_result_to_lane
    
    start_electrophoresis

    discard_stripwells
    
    release items, interactive: true
    
    set_timer
    get_protocol_feedback
    return {}
    
  end
  
  # Change the input and output field values so that their item ids, row, and column
  # are all strictly ascending (in that sort order). The mapping from input->output
  # is manually made to enforce this parrellel
  def align_input_and_output_indicies ops
    # Sort operations by gels and columns (these can get out of order from PCR)
    ops.sort! do |op1, op2| 
      fv1 = op1.input("Fragment")
      fv2 = op2.input("Fragment")
      [fv1.item.id, fv1.column] <=> [fv2.item.id, fv2.column]
    end
    
    gels = ops.map { |op| op.input("Gel").collection }.uniq.sort { |g1, g2| g1.id <=> g2.id }
    gel_size = gels.first.object_type.rows * gels.first.object_type.columns
    gel_columns = gels.first.object_type.columns
    
    # spots already taken up by the ladder in gel:
    ###############
    # 1 1 0 0 0 0 #
    # 1 1 0 0 0 0 #
    ###############
    size_adjusted_for_lader = gel_size - 4
    columns_adjusted_for_ladder = gel_columns - 2
    column_start_adjusted_for_ladder = 2
    
    # associate operations with new gel, row & column
    ops.each_with_index do |op, idx|
      gel_idx = idx / size_adjusted_for_lader
      lane = idx % size_adjusted_for_lader
      row = lane / columns_adjusted_for_ladder
      column = (lane % columns_adjusted_for_ladder) + column_start_adjusted_for_ladder
      
      gel_fv = op.input("Gel")
      gel_fv.set collection: gels[gel_idx]
      gel_fv.row = row
      gel_fv.column = column
      gel_fv.save
        # show { note "op #{idx}: col: #{op.input("Gel").collection.id}, row: #{op.input("Gel").row}, column: #{op.input("Gel").column}" }
    end

    # Don't use generic operations.make
    ops.each do |op|
        op.output("Fragment").make_part(
          op.input("Gel").collection,
          op.input("Gel").row,
          op.input("Gel").column
        )
    end
    ops
  end
  
  # This method tells the technician to set up the power supply.
  def setup_power_supply
    show do
      title "Set up the power supply"
      
      note  "In the gel room, obtain a power supply and set it to 80 V and with a 40 minute timer."
      note  "Attach the electrodes of an appropriate gel box lid to the power supply."
      
      image "Items/gel_power_settings.JPG" 
    end
  end
  
  # This method tells the technician to set up the power supply.
  def setup_gel_box
    show do
      title "Set up the gel box(s)."
      
      check "Remove the casting tray(s) (with gel(s)) and place it(them) on the bench."
      check "Using the graduated cylinder, fill the gel box(s) with 200 mL of 1X TAE. TAE should just cover the center of the gel box(s)."
      check "With the gel box(s) electrodes facing away from you, place the casting tray(s) (with gel(s)) back in the gel box(s). The top lane(s) should be on your left, as the DNA will move to the right."
      check "Using the graduated cylinder, add 50 mL of 1X TAE so that the surface of the gel is covered."
      check "Remove the comb(s) and place them in the appropriate box(s)."
      check "Put the graduated cylinder back."
      
      image "Items/gel_fill_TAE_to_line.JPG"
    end  
  end
  
  # This method tells the technician to transfer PCR results into their indicated gel lanes.
  def transfer_result_to_lane
    show do 
      title "Transfer 50 uL of each PCR result into indicated gel lane"
      note "Transfer samples from each stripwell to the gel(s) according to the following table:"
      table operations.reject { |op| op.virtual? }.sort { |op1, op2| op1.input("Fragment").item.id <=> op2.input("Fragment").item.id }.extend(OperationList).start_table
          .input_collection("Fragment", heading: "Stripwell")
          .custom_column(heading: "Well Number") { |op| (op.input("Fragment").column + 1)  }
          .input_collection("Gel", heading: "Gel")
          .custom_column(heading: "Gel Row") { |op| (op.input("Gel").row + 1) }
          .custom_column(heading: "Gel Column", checkable: true) { |op| (op.input("Gel").column + 1) }
      .end_table
    end
  end
  
  # This method tells the technician to start electrophoresis
  def start_electrophoresis
    show do
      title "Start Electrophoresis"
      note "Carefully attach the gel box lid(s) to the gel box(es). Attach the red electrode to the red terminal of the power supply, and the black electrode to the neighboring black terminal. Hit the start button on the gel boxes."
      note "Make sure the power supply is not erroring (no E* messages) and that there are bubbles emerging from the platinum wires in the bottom corners of the gel box."
      image "Items/gel_check_for_bubbles.JPG"
    end
  end
  
  # Tells the technician to discard stripwells
  def discard_stripwells
    show do 
      title "Discard Stripwells"
      note "Discard all the empty stripwells"
      operations.each do |op|
          #if op.input("Fragment").item != nil
            op.input("Fragment").item.mark_as_deleted
          #else
          #  show do
          #      note "Item you are trying to delete is nil. Cannot discard." #{op.input("Fragment").item.id}
          #  end
          #end
      end
    end
  end
  
  # Tells the technician to set a timer.
  def set_timer
    show do
      title "Set a timer"
      
      check "When you get back to your bench, set a 40 minute timer." 
      check "When the 40 minute timer is up, grab a lab manager to check on the gel. The lab manager may have you set another timer after checking the gel."
    end
  end
  
  # Tells the technician to add dye to each well.
  def add_dye stripwells
    show do 
      title "Add Dye to Each Well"
      stripwells.each do |s|
          note "Add 10 uL dye to stripwell #{s.id} from wells #{s.non_empty_string}"
      end
    end
  end
  
  # This method tells the technician to add ladders to gells.
  def add_ladders_to_gel gels, ladder_1k, ladder_100
    gels.each do |gel|
      gel.set 0,0,ladder_1k.id
      gel.set 0,1, ladder_100.id
      gel.set 1,0, ladder_1k.id
      gel.set 1,1, ladder_100.id
      show do
        title "Add Ladders to Gel"
        note "Pipette 10 uL of the 1 kb ladder to positions (1,1) and (2,1) of gel #{gel.id}"
        note "Pipette 10 uL of the 100bp ladder to positions (1,2) and (2,2) of gel #{gel.id}"
      end
    end
  end
end

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object_types:
  - {name: Maxiprep Stock, description: A 1.5 mL tube containing purified plasmid DNA, handler: sample_container, unit: Plasmid, release_method: return, prefix: M20, sample_type_name: Plasmid}
  - {name: Sequencing Stripwell, description: Sequencing stripwell, handler: collection, unit: stripwell, release_method: query, rows: 1, columns: 12}
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operation_type: Send to Sequencing
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 570, stop: 660, days: ["Su","Mo","Tu","We","Th","Fr"], active: true}
field_types:
  - {ftype: sample, role: input, name: Plasmid, sample_types: [Plasmid, Fragment, Plasmid], object_types: [Plasmid Stock, Fragment Stock, Maxiprep Stock], routing: P}
  - {ftype: sample, role: input, name: Sequencing Primer, sample_types: [Primer], object_types: [Primer Aliquot], routing: SP}
  - {ftype: sample, role: output, name: Plasmid for Sequencing, sample_types: [Plasmid, Fragment], object_types: [Sequencing Stripwell, Sequencing Stripwell], part: true, routing: P}
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documentation:
Sends sequencing primer and plasmid stock to Genewiz.

The technician will mix the sequencing primer and plasmid stock in a stripwell. They then fill
out the form on the Genewiz website and place the stripwell in the Genewiz dropbox.

Ran after **Make Miniprep** and is a precursor to **Upload Sequencing Results**.

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cost_model:
#Send to Sequencing Cost Model

def cost(op)
  { labor: 8.43, materials: 5.31 }
end

protocol:
# frozen_string_literal: true

needs 'Cloning Libs/Cloning'
needs 'Standard Libs/Feedback'

class Protocol
  include Feedback
  include Cloning

  PLASMID = 'Plasmid'
  PRIMER = 'Sequencing Primer'
  SEQ_RESULT = 'Plasmid for Sequencing'
  GENEWIZ_USER = Parameter.get('Genewiz User')
  GENEWIZ_PASS = Parameter.get('Genewiz Password')

  def main
    operations.retrieve
    # Raise error if fragment length is invalid

    # Check for valid fragment lengths
    operations.each do |op|
      if op.input(PLASMID).item.sample.properties['Length'].nil?
        raise "This fragment's length is not valid."
      end
    end

    check_concentration operations, PLASMID

    # calculate required input volumes based on Genewiz guide, store in values of op.temporary[<input>_vol]
    calculate_volumes

    # volume check using the volumes calculated in the previously called 'calculate_volumes' method
    check_volumes [PLASMID], :stock_vol, :your_plasmid_sucks, check_contam: true
    check_volumes [PRIMER], :primer_vol, :make_aliquots_from_stock, check_contam: true

    if operations.running.empty?
      show do
        title "It's your lucky day!"

        note "There's no sequencing to do. :)"
      end
      operations.store
      return {}
    end

    operations.make
    operations.each do |op|
      raise 'At least one of the output collections could not be made successfully' if op.output(SEQ_RESULT).item.nil?
    end

    stripwells = operations.output_collections['Plasmid for Sequencing']

    # label sequencing stripwell(s)
    prepare_stripwells stripwells

    # load stripwells with molecular grade water
    load_water stripwells

    # load stripwells with stock
    load_stock stripwells

    # load stripwells with primer
    load_primer stripwells

    # delete stripwells
    stripwells.each(&:mark_as_deleted)

    operations.store

    # create Genewiz order
    genewiz = genewiz_order

    # store stripwells in dropbox
    store_stripwells

    # save order data in stripwells
    save_order_data genewiz

    operations.store(interactive: false)

    get_protocol_feedback
    {}
  end

  # This method calculates water volume, stock volume, and primer volume.
  def calculate_volumes
    ng_by_length_plas = [500.0, 800.0, 1000.0].zip [6000, 10_000]
    ng_by_length_frag = [10.0, 20.0, 40.0, 60.0, 80.0].zip [500, 1000, 2000, 4000]
    samples_list = []

    operations.each do |op|
      stock = op.input(PLASMID).item
      length = stock.sample.properties['Length']
      conc = stock.get(:concentration).to_f || rand(300) / 300
      conc = rand(4000..6000) / 10.0 if debug
      samples_list.push(op.input('Plasmid').sample)

      ng_by_length = stock.sample.sample_type.name == 'Plasmid' ? ng_by_length_plas : ng_by_length_frag
      plas_vol = ng_by_length.find { |ng_l| ng_l[1].nil? ? true : length < ng_l[1] }[0] / conc
      plas_vol = plas_vol < 0.5 ? 0.5 : plas_vol > 12.5 ? 12.5 : plas_vol

      water_vol_rounded = (((12.5 - plas_vol) / 0.2).floor * 0.2).round(1)
      plas_vol_rounded = ((plas_vol / 0.2).ceil * 0.2).round(1)
      primer_vol_rounded = 2.5

      op.temporary[:water_vol] = water_vol_rounded
      op.temporary[:stock_vol] = plas_vol_rounded
      op.temporary[:primer_vol] = primer_vol_rounded
    end
  end

  # This method tells the technician to prepare stripwells for the sequencing reaction.
  def prepare_stripwells(stripwells)
    show do
      title 'Prepare stripwells for sequencing reaction'

      stripwells.each_with_index do |_sw, idx|
        if idx < stripwells.length - 1
          check "Label the first well of an unused stripwell with UB#{idx * 12 + 1} and last
                 well with UB#{idx * 12 + 12}"
        else
          number_of_wells = operations.running.length - idx * 12
          check "Prepare a #{number_of_wells}-well stripwell, and label the first well with
                 UB#{idx * 12 + 1} and the last well with UB#{operations.running.length}"
        end
      end
    end
  end

  # This method tells the technician to load stripwells with molecular grade water.
  def load_water(stripwells)
    show do
      title "Load stripwells #{stripwells.map(&:id).join(', ')} with molecular grade water"

      stripwells.each_with_index do |sw, idx|
        note "Stripwell #{idx + 1}"
        table operations.running.select { |op| op.output('Plasmid for Sequencing').collection == sw }.start_table
                        .custom_column(heading: 'Well') { |op| op.output('Plasmid for Sequencing').column + 1 }
                        .custom_column(heading: 'Molecular Grade Water (uL)', checkable: true) { |op| op.temporary[:water_vol] }
                        .end_table
      end
    end
  end

  # This method tells the technician to load stripwells with plasmid stock.
  def load_stock(stripwells)
    show do
      title "Load stripwells #{stripwells.map(&:id).join(', ')} with plasmid stock"

      stripwells.each_with_index do |sw, idx|
        note "Stripwell #{idx + 1}"
        table operations.running.select { |op| op.output('Plasmid for Sequencing').collection == sw }.start_table
                        .custom_column(heading: 'Well') { |op| op.output('Plasmid for Sequencing').column + 1 }
                        .input_item(PLASMID, heading: 'Stock')
                        .custom_column(heading: 'Volume (uL)', checkable: true) { |op| op.temporary[:stock_vol] }
                        .end_table
      end
    end
  end

  # This method tells the technician to load stripwells with primer.
  def load_primer(stripwells)
    show do
      title "Load stripwells #{stripwells.map(&:id).join(', ')} with Primer"

      stripwells.each_with_index do |sw, idx|
        note "Stripwell #{idx + 1}"
        table operations.running.select { |op| op.output('Plasmid for Sequencing').collection == sw }.start_table
                        .custom_column(heading: 'Well') { |op| op.output('Plasmid for Sequencing').column + 1 }
                        .input_item(PRIMER, heading: 'Primer Aliquot')
                        .custom_column(heading: 'Volume (uL)', checkable: true) { |op| op.temporary[:primer_vol] }
                        .end_table
      end
    end
  end

  def valid?(tracking_number)
    tracking_number.present? && /\d{2}-\d+/.match(tracking_number)
  end

  # This method prompts the technician to go to the Genewiz wensite and create a new order.
  # This method returns the data captured by the show block that tells the technician
  # to create the Genewiz order.
  def genewiz_order
    operations.running.each do |op|
      stock = op.input(PLASMID).item
      primer = op.input(PRIMER).sample
      order_name_base = "#{stock.id}-#{stock.sample.user.name.gsub(/[^a-z]/i, '_')}"

      op.temporary[:seq_order_name_wo_primer] = order_name_base
      op.output(SEQ_RESULT).item.associate "seq_order_name_#{op.output(SEQ_RESULT).column}".to_sym, (order_name_base + "-#{primer.id}")
    end

    display_genewiz_instructions(operations)
    genewiz_tracking = get_genewiz_tracking_number

    genewiz_tracking
  end

  def display_genewiz_instructions(operations)
    show_return = show do
      title 'Create a Genewiz order'

      check "Go the <a href='https://clims3.genewiz.com/default.aspx' target='_blank'>GENEWIZ website</a>, log in with lab account (Username: #{GENEWIZ_USER}, password is #{GENEWIZ_PASS})."
      check "Click Create Sequencing Order, choose Same Day, Online Form, Pre-Mixed, #{operations.running.length} samples, then Create New Form"
      check 'Enter DNA Name and My Primer Name according to the following table, choose DNA Type to be Plasmid'

      table operations.start_table
                      .custom_column(heading: 'DNA Name') { |op| op.temporary[:seq_order_name_wo_primer] }
                      .custom_column(heading: 'DNA Type') { |op| op.input(PLASMID).sample.sample_type.name == 'Plasmid' ? 'Plasmid' : 'Purified PCR' }
                      .custom_column(heading: 'DNA Length') { |op| op.input(PLASMID).sample.properties['Length'] }
                      .custom_column(heading: 'My Primer Name') { |op| op.input(PRIMER).sample.id }
                      .end_table

      check 'Click Save & Review, Review the form and click Next Step'
      check 'Click Checkout'
      check 'Print out the form and enter the Genewiz tracking number on the next screen'
    end
  end

  def get_genewiz_tracking_number
    tracking_number = nil
    until valid?(tracking_number) || debug
      genewiz_tracking = show do
        if tracking_number.nil?
          title 'Enter the GeneWiz Tracking Number'
        else
          title 'Invalid GeneWiz Tracking Number. Try again.'
        end

        table operations.extend(OperationList).start_table
                        .custom_column(heading: 'Operation ID', &:id)
                        .custom_column(heading: 'Plan ID') { |op| op.plan.id }
                        .end_table

        get('text', var: 'tracking_num', label: 'Enter the Genewiz tracking number', default: 'TRACKING NUMBER')
        check 'Confirm that you properly entered the tracking number above'
      end
      tracking_number = genewiz_tracking[:tracking_num]
    end

    genewiz_tracking
  end

  # This method tells the technician to store the stripwells in the Genewiz dropbox.
  def store_stripwells
    show do
      title 'Put all stripwells in the Genewiz dropbox'
      check 'Cap all of the stripwells.'
      check 'Put the stripwells into a zip-lock bag along with the printed Genewiz order form.'
      check 'Ensure that the bag is sealed, and put it into the Genewiz dropbox.'
    end
  end

  # This method saves the order data of the genewiz order.
  def save_order_data(genewiz)
    order_date = Time.now.strftime('%-m/%-d/%y %I:%M:%S %p')
    operations.each do |op|
      op.set_output_data SEQ_RESULT, :tracking_num, genewiz[:tracking_num]
      op.set_output_data SEQ_RESULT, :order_date, order_date
    end
  end

  # This method takes inputs and tells the technician to discard any contaminated DNA stock items.
  def your_plasmid_sucks(bad_ops_by_item, _inputs)
    if bad_ops_by_item.keys.select { |item| item.get(:contaminated) == 'Yes' }.any?
      show do
        title 'discard contaminated DNA'

        note "discard the following contaminated DNA stock items: #{bad_ops_by_item.keys.select { |item| item.get(:contaminated) == 'Yes' }.map(&:id).to_sentence}"
      end
    end

    bad_ops_by_item.each do |item, _ops|
      bad_ops_by_item[item].each { |op| op.error :not_enough_volume, "Plasmid stock  #{item.id} did not have enough volume, or was contaminated. Please make another!" }
      bad_ops_by_item.except! item
      item.mark_as_deleted if item.get(:contaminated) == 'Yes'
    end
  end
end

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object_types:
  - {name: Ligation product, description: A low concentration, possibly multi-species, product of a ligation reaction. Suitable for transformation or use as a PCR template., handler: sample_container, unit: Plasmid stock, release_method: return, prefix: M20, sample_type_name: Plasmid}
  - {name: DNA Mix, description: Mix of DNA fragments (e.g. for E coli gap repair or yeast homologous recombination), handler: sample_container, unit: Plasmid, release_method: return, prefix: M20, sample_type_name: Plasmid}
  - {name: E. coli Comp Cell Batch, description: E. coli Comp Cell Batch, handler: collection, data: { "samples": [ {"name": "DH5alpha", "materials": 0.58, "labor": 2.39, "unit": "cell" } ] }, unit: batch, release_method: return, rows: 10, columns: 10}
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operation_type: Transform Cells
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 810, stop: 840, days: ["Mo","Tu","We","Th","Fr"], active: true}
field_types:
  - {ftype: sample, role: input, name: Plasmid, sample_types: [Plasmid, Plasmid, Plasmid, Plasmid, Plasmid], object_types: [Gibson Reaction Result, Ligation product, Plasmid Stock, 1 ng/µL Plasmid Stock, DNA Mix], routing: P}
  - {ftype: sample, role: output, name: Transformed E Coli, sample_types: [Plasmid], object_types: [Transformed E. coli Aliquot], routing: P}
  - {ftype: sample, role: input, name: Comp Cells, sample_types: [E coli strain], object_types: [E. coli Comp Cell Batch], part: true, routing: C}
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documentation:
Transforms input cells.

The technician retrieves the input plasmid and, using DH5a E. coli competent cells, performs electroporation. The electeroporated cells are then inoculated in LB for an hour.

Ran after **Assemble Plasmid** and is a precursor to **Plate Transformed Cells**.

precondition:
eval Library.find_by_name("Preconditions").code("source").content
extend Preconditions

def precondition(op) 
    if op.input("Plasmid").object_type.name == "Ligation Product" 
        return time_elapsed op, "Plasmid", hours: 2
    else
        return true
    end
    
    if op.input("Plasmid").sample.properties["Bacterial Marker"].nil? || op.input("Plasmid").sample.properties["Bacterial Marker"] == ""
        return false
    end
end

cost_model:
# Transform Ecoli Cells Cost Model

def cost(op)
    {
        materials: 3.57,
        labor: 6.68 
    }      
end

protocol:
# Author: Ayesha Saleem
# November 5, 2016
# Revision: Justin Vrana, 2017-07-21 (corrected index error, refactored collection removal proceedure, added batch replacement, added plasimd stock dilution)
# Revision: Orlando do Lange, 2017-09-12 (Added precondition that if the input is a Ligation product that item must be at least 2 hours old)

needs "Cloning Libs/Special Days"
needs "Standard Libs/Debug"
needs "Standard Libs/Feedback"

class Protocol
  include Feedback
  include SpecialDays
  include Debug
  
  # io
  CELLS = "Comp Cells"
  INPUT = "Plasmid"
  OUTPUT = "Transformed E Coli"
  
  # debug
  DEBUG_WITH_REPLACEMENT = true
  
  # specs
  RESUSPENSION_VOL = 900 # how much to resuspend transformed cells in
    
  def main
    # Detract comp cells from batches, store how many of each type of comp cell there are, and figure out how many Amp vs Kan plates will be needed 
    
    # Determine replacements of e coli comp cell batch
    determine_replacements

    # Detract from running batches
    operations.running.each { |op| op.input(CELLS).collection.remove_one op.input(CELLS).sample }

    # Exit early if there are no more running operations
    if operations.empty?
      show do
        title "All operations have errored"
        note "All operations have errored out."
      end
      return {}
    end
  
    # Make 
    operations.running.retrieve(only: ["Plasmid"]).make
   
    # Prepare electroporator 
    prepare_electroporator
      
    # Measure plasmid stock concentrations
    ops_for_dilution = operations.running.select { |op| op.input(INPUT).object_type.name == "Plasmid Stock" }
    ops_for_measurement = ops_for_dilution.select { |op| op.input(INPUT).item.get(:concentration).to_f == 0.0 }
    measure_plasmid_stock ops_for_measurement

    # Dilute plasmid stocks
    dilute_plasmid_stocks ops_for_dilution
  
    # Get comp cells and cuvettes 
    get_cold_items  
      
    # Label aliquots
    label_aliquots  
      
    index = 0
  
    # Display table to tech
    display_table index
      
    #plate pre heating
    plate_preheating  
    
    # Incubate transformants
    incubate_transformants 

    # Clean up
    clean_up
      
    # Move items
      operations.running.each do |op|
        op.output(OUTPUT).item.move "37C shaker"
      end
      
    give_happy_birthday
      
    # Store dna stocks
      all_stocks = operations.running.map { |op| [op.input(INPUT).item, op.temporary[:old_stock]] }.flatten.uniq
      all_stocks.compact!
      release all_stocks, interactive: true, method: "boxes"
      
    return {}
  end
  
  # This method tells the technician to prepare the electroporator and bench
  def prepare_electroporator
    show do
      title "Prepare bench"
      note "If the electroporator is off (no numbers displayed), turn it on using the ON/STDBY button."
      note "Set the voltage to 1250V by clicking the up and down buttons."
      note " Click the time constant button to show 0.0."
      image "Actions/Transformation/initialize_electroporator.jpg"
      check "Retrieve and label #{operations.running.length} 1.5 mL tubes with the following ids: #{operations.running.collect { |op| "#{op.output(OUTPUT).item.id}"}.join(",")} "
      check "Set your 3 pipettors to be 2 uL, 42 uL, and 900 uL."
      check "Prepare 10 uL, 100 uL, and 1000 uL pipette tips."      
      check "Grab a Bench SOC liquid aliquot (sterile) and loosen the cap."
    end
  end
  
  # takes in array of operations and asks the technician
  # to measure the concentrations of the input items.
  # 
  # @param ops_for_measurement [Array] the ops that contain the items we are measuring
  def measure_plasmid_stock ops_for_measurement
    if ops_for_measurement.any?
      conc_table = Proc.new { |ops|
        ops.start_table
          .input_item(INPUT)
          .custom_input(:concentration, heading: "Concentration (ng/ul)", type: "number") { |op| 
            x = op.temporary[:concentration] || -1
            x = rand(10..100) if debug
            x
          }
          .validate(:concentration) { |op, v| v.between?(0,10000) }
          .validation_message(:concentration) { |op, k, v| "Concentration must be non-zero!" }
          .end_table.all
      }
      
      show_with_input_table(ops_for_measurement, conc_table) do
        title "Measure concentrations"
        note "The concentrations of some plasmid stocks are unknown."
        check "Go to the nanodrop and measure the concentrations for the following items."
        check "Write the concentration on the side of each tube"
      end
      
      ops_for_measurement.each do |op|
        op.input(INPUT).item.associate :concentration, op.temporary[:concentration]
      end
    end
  end
  
  # This method tells the technician to get cold items.
  def get_cold_items  
    show do 
      title "Get cold items"
      note "Retrieve a styrofoam ice block and an aluminum tube rack. Put the aluminum tube rack on top of the ice block."
      image "arrange_cold_block"
      check "Retrieve #{operations.length} cuvettes and put inside the styrofoam touching ice block."
      note "Retrieve the following electrocompetent aliquots from the M80 and place them on an aluminum tube rack: "
      operations.group_by { |op| op.input(CELLS).item }.each do |batch, grouped_ops|
        check "#{grouped_ops.size} aliquot(s) of #{grouped_ops.first.input(CELLS).sample.name} from batch #{batch.id}"
      end
      image "Actions/Transformation/handle_electrocompetent_cells.jpg"
    end
  end
  
  # This method tells the technician to label aliquots.
  def label_aliquots  
    show do 
      title "Label aliquots"
      aliquotsLabeled = 0
      operations.group_by { |op| op.input(CELLS).item }.each do |batch, grouped_ops|
        if grouped_ops.size == 1
          check "Label the electrocompetent aliquot of #{grouped_ops.first.input(CELLS).sample.name} as #{aliquotsLabeled + 1}."
        else
          check "Label each electrocompetent aliquot of #{grouped_ops.first.input(CELLS).sample.name} from #{aliquotsLabeled + 1}-#{grouped_ops.size + aliquotsLabeled}."
        end
        aliquotsLabeled += grouped_ops.size
      end
      note "If still frozen, wait till the cells have thawed to a slushy consistency."
      warning "Transformation efficiency depends on keeping electrocompetent cells ice-cold until electroporation."
      warning "Do not wait too long"
      image "Actions/Transformation/thawed_electrocompotent_cells.jpg"
    end
  end
  
  # This method tells the technician to add plasmid to the electrocompetent aliquot, electroporate, and rescue.
  def display_table index
    show do
      title "Add plasmid to electrocompetent aliquot, electroporate and rescue "
      note "Repeat for each row in the table:"
      check "Pipette 2 uL plasmid/gibson result into labeled electrocompetent aliquot, swirl the tip to mix and place back on the aluminum rack after mixing."
      check "Transfer 42 uL of e-comp cells to electrocuvette with P100"
      check "Slide into electroporator, press PULSE button twice, and QUICKLY add #{RESUSPENSION_VOL} uL of SOC"
      check "pipette cells up and down 3 times, then transfer #{RESUSPENSION_VOL} uL to appropriate 1.5 mL tube with P1000"
      table operations.running.start_table 
        .input_item("Plasmid")
        .custom_column(heading: "Electrocompetent Aliquot") { index = index + 1 }
        .output_item("Transformed E Coli", checkable: true)
        .end_table
    end
  end
  
  # This method tells the technician to incubate the E. coli transformants.
  def incubate_transformants 
    show do 
      title "Incubate transformants"
      check "Grab a glass flask"
      check "Place E. coli transformants inside flask laying sideways and place flask into shaking #{operations[0].input("Plasmid").sample.properties["Transformation Temperature"].to_i} C incubator."
      #Open google timer in new window
      note "Transformants with an AMP marker should incubate for only 30 minutes. Transformants with a KAN, SPEC, or CHLOR marker needs to incubate for 60 minutes."
      note "<a href=\'https://www.google.com/search?q=30%20minute%20timer\' target=\'_blank\'>Use a 30 minute Google timer</a> or <a href=\'https://www.google.com/search?q=60%20minute%20timer\' target=\'_blank\'>a 60 minute Google timer</a> to set a reminder to retrieve the transformants, at which point you will start the \'Plate Transformed Cells\' protocol."
      image "Actions/Transformation/37_c_shaker_incubator.jpg"
      note "While the transformants incubate, finish this protocol by completing the remaining tasks."
    end
  end
  
  # This method tells the technician to pre-heat the plates for later use.
  def plate_preheating  
    show do 
      title "Pre-heat plates"
      note "Retrieve the following plates, and place into still #{operations[0].input("Plasmid").sample.properties["Transformation Temperature"].to_i} C incubator."    
      grouped_by_marker = operations.running.group_by { |op|
        op.input(INPUT).sample.properties["Bacterial Marker"].upcase
      }
      grouped_by_marker.each do |marker, ops|
        check "#{ops.size} LB + #{marker} plates"
      end
      image "Actions/Plating/put_plate_incubator.JPG"
    end
  end
  
  # This method tells the technician to clean up items used in this protocol.
  def clean_up
    show do
      title "Clean up"
      check "Put all cuvettes into biohazardous waste."
      check "Discard empty electrocompetent aliquot tubes into waste bin."
      check "Return the styrofoam ice block and the aluminum tube rack."
      image "Actions/Transformation/dump_dirty_cuvettes.jpg"
    end
  end
  
  # This method determines and finds replacement batches if the current batch is empty.
  # If there are no replacement batches available, that batch's operation errors.
  def determine_replacements
    operations.running.each do |op|
      # If current batch is empty
      if op.input(CELLS).collection.empty? || (debug and DEBUG_WITH_REPLACEMENT)
        old_batch = op.input(CELLS).collection
        
        # Find replacement batches
        all_batches = Collection.where(object_type_id: old_batch.object_type.id).select { |b| !b.empty? && !b.deleted? && (b.matrix[0].include? op.input(CELLS).sample.id) }
        # batches_of_cells = all_batches.select { |b| b.include? op.input(CELLS).sample && !b.deleted? }.sort { |x| x.num_samples }
        batches_of_cells = all_batches.reject { |b| b == old_batch }.sort { |x| x.num_samples } # debug specific rejection to force replacement
        
        # Error if not enough
        if batches_of_cells.empty?
          op.error :not_enough_comp_cells, "There were not enough comp cells of #{op.input(CELLS).sample.name} to complete the operation."
        else
          # Set input to new batch
          
          op.input(CELLS).set collection: batches_of_cells.last
          # Display warning
          op.associate :comp_cell_batch_replaced, "There were not enough comp cells for this operation. Replaced batch #{old_batch.id} with batch #{op.input(CELLS).collection.id}"
        end
      end
    end
  end
  
  # This method tells the technician to dilute plasmid stocks.
  def dilute_plasmid_stocks ops_for_dilution
    if ops_for_dilution.any?
      show do
        title "Prepare plasmid stocks"
        
        ops_for_dilution.each do |op|
          i = produce new_sample op.input(INPUT).sample.name, of: op.input(INPUT).sample_type, as: "1 ng/µL Plasmid Stock"
          
          op.temporary[:old_stock] = op.input(INPUT).item
          op.input(INPUT).item.associate :from, op.temporary[:old_stock].id
          vol = 0.5
          c = op.temporary[:old_stock].get(:concentration).to_f
          op.temporary[:water_vol] = (vol * c).round(1)
          op.temporary[:vol] = vol
          op.input(INPUT).set item: i
          op.associate :plasmid_stock_diluted, "Plasmid stock #{op.temporary[:old_stock].id} was diluted and a 1 ng/ul Plasmid Stock was created: #{op.input(INPUT).item.id}"
        end
        
        check "Grab <b>#{ops_for_dilution.size}</b> 1.5 mL tubes and place in rack"
        note "According to the table below:"
        check "Label all tubes with the corresponding Tube id"
        check "Pipette MG H20"
        check "Pipette DNA"
        table ops_for_dilution.start_table
          .input_item(INPUT, heading: "Tube id", checkable: true)
          .custom_column(heading: "MG H20", checkable: true) { |op| "#{op.temporary[:water_vol]} ul" }
          .custom_column(heading: "Plasmid Stock (ul)", checkable: true) { |op| "#{op.temporary[:vol]} ul of #{op.temporary[:old_stock].id}" }
          .end_table
      end
      
      show do
        title "Set aside old plasmid stocks"
        
        note "The following plasmid stocks will no longer be needed for this protocol."
        check "Set aside the old plasmid stocks:"
        ops_for_dilution.each do |op|
          check "#{op.temporary[:old_stock]}"
        end
      end
    end
  end
end 

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operation_type: Upload Sequencing Results
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 480, stop: 510, days: ["Mo","Tu","We","Th","Fr","Sa"], active: true}
field_types:
  - {ftype: sample, role: input, name: Plasmid, sample_types: [Plasmid, Fragment], object_types: [Sequencing Stripwell, Sequencing Stripwell], part: true, routing: P}
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documentation:
Uploads sequencing results.

The technician uploads the sequencing results, and the user is prompted to verify whether the sequence is correct. If the sequence is correct, the overnight that holds the plasmid cells is automatically submitted to **Make Glycerol Stock**; if the results are incorrect, the plate and overnight associated with the plasmid stock are thrown out. 

Run after **Send to Sequencing** and is a precursor to **Make Glycerol Stock**. 

precondition:
def precondition(op)
  if op.input("Plasmid").item
      order_name = op.input("Plasmid").item.get "seq_order_name_#{op.input("Plasmid").column}".to_sym
      
      # associate old sequencing name style (just in case)
      if order_name.nil?
        op.input("Plasmid").item.associate "seq_order_name_#{op.input("Plasmid").column}".to_sym, "#{op.input("Plasmid").item.id}_#{op.input("Plasmid").column}"
    end
  end
  
  true
end

cost_model:
def cost(op)
  { labor: 0.2, materials: 0 }
end

protocol:
# frozen_string_literal: true

# Creates "Clean Up Sequencing" operation only if plate matches the allowable_field_types found in "Clean Up Sequencing" Plate input   Aug 17, 2018 JV

needs 'Standard Libs/Debug'
needs 'Standard Libs/Feedback'

class Protocol
  include Feedback
  include Debug

  ORDER = 'Plasmid'
  GENEWIZ_USER = Parameter.get('Genewiz User')
  GENEWIZ_PASS = Parameter.get('Genewiz Password')
  AQ_URL = Parameter.get('URL')

  def main
    add_debug_defaults

    # TODO: manage batches of operations by tracking number
    tracking_num = ensure_valid_tracking_number
    return {} if tracking_num.blank?

    operations.retrieve interactive: false

    return {} unless results_have_arrived?(tracking_num)
    upload_batched_results tracking_num
    upload_individual_results tracking_num

    operations.each do |op|
      # Query user for next step
      op.plan.associate "Item #{op.temporary[:seq_name].split('-')[0]} sequencing ok?", 'yes - discard plate, and mark plasmid stock as sequence verified; resequence - keep plate and plasmid stock; no - discard plasmid stock'
    end
    add_clean_up_sequencings(operations.running)
    notify_users

    get_protocol_feedback

    {}
  end

  # This method sets variables to a default value during debug mode.
  def add_debug_defaults
    if debug
      operations.each do |op|
        sw = op.input(ORDER).item
        sw.associate :tracking_num, [12_345, 23_523].sample unless sw.get(:tracking_num)

        key = "seq_order_name_#{op.input(ORDER).column}"
        next unless sw.associations.none? { |k, _v| k == key }
        stock = Item.where(object_type_id: ObjectType.find_by_name('Plasmid Stock')).all.sample
        primer = Item.where(object_type_id: ObjectType.find_by_name('Primer Stock')).all.sample.sample

        sw.associate key.to_sym, "#{stock.id}-#{stock.sample.user.name}-#{primer.id}"
      end
    end
  end

  def valid?(tracking_number)
    tracking_number.present? and /\d{2}-\d+/.match(tracking_number)
  end

  # This method ensures that all the operations involved have the same
  # tracking number.
  def ensure_valid_tracking_number
    ops_by_num = Hash.new { |h, k| h[k] = [] }
    operations.each { |op| ops_by_num[op.input(ORDER).item.get(:tracking_num)].push op }
    tracking_numbers = ops_by_num.keys

    tracking_number =
      if tracking_numbers.include?(nil)
        get_missing_tracking_number(ops_by_num[nil])
      elsif tracking_numbers.length == 1
        tracking_numbers.first
      else
        handle_multiple_tracking_numbers(op_map: ops_by_num)
      end

    unless valid?(tracking_number)
      # TODO: check for invalid IDs
      show do
        title 'Tracking number is not valid'

        note 'Setting operations to pending'
      end
      operations.each { |op| op.change_status 'pending' }
    end

    tracking_number
  end

  # Collects operations that have a blanck tracking number and asks for the
  # tracking number to be added. Returns the entered tracking number.
  #
  def get_missing_tracking_number(operations)
    # TODO: change so that can handle multiple batches with different tracking numbers
    genewiz_tracking = show do
      title 'The following operations have no tracking number'

      table operations.extend(OperationList).start_table
                      .custom_column(heading: 'Operation ID', &:id)
                      .custom_column(heading: 'Plan ID') { |op| op.plan.id }
                      .end_table

      get('text', var: 'tracking_num', label: 'Enter the Genewiz tracking number', default: 'TRACKING NUMBER')
      check 'Confirm that you properly entered the tracking number above'
    end

    # TODO: deal with bad tracking number
    tracking_number = genewiz_tracking[:tracking_num]

    # code from send to sequencing
    operations.each do |op|
      # TODO: change this to operate directly on item instead of using method
      op.set_input_data(ORDER, :tracking_num, tracking_number)
    end

    tracking_number
  end

  def handle_multiple_tracking_numbers(op_map:)
    show do
      title 'Error: there are multiple tracking numbers'

      note "There are #{op_map.keys.length} different tracking numbers"
      note 'Please consider the suggested batching option.'

      op_map.each do |num, ops|
        if num.present?
          note "Tracking number: #{num}"
        else
          note 'No tracking number:'
        end

        table ops.extend(OperationList).start_table
                 .custom_column(heading: 'Operation ID', &:id)
                 .custom_column(heading: 'Plan ID') { |op| op.plan.id }
                 .end_table
      end
    end

    nil
  end

  # This method asks the technician to see if the sequencing results have arrived.
  def results_have_arrived?(tracking_num)
    results_info = show do
      title 'Check if Sequencing results arrived?'

      check "Go the Genewiz website, log in with lab account (Username: #{GENEWIZ_USER}, password is #{GENEWIZ_PASS})."
      note "In Recent Results table, click Tracking Number #{tracking_num}, and check if the sequencing results have shown up yet."

      select %w[Yes No], var: 'results_back_or_not', label: 'Do the sequencing results show up?', default: 0
    end

    if results_info[:results_back_or_not] == 'No'
      show do
        title 'No Results'
        note 'Sequencing results are not yet available, wait a while and then run this job again.'
      end
      operations.each do |op|
        op.change_status 'pending'
      end
      return false
    end

    true
  end

  # USERS DO NOT NEED FULL BATCH OF SEQUENCING RESULTS, THEY ONLY WANT THEIR OWN RESULTS ASSOCIATED WITH THEIR PLAN
  def upload_batched_results(tracking_num)
    show do
      title 'Download Genewiz Sequencing Results zip file'

      note "Click the button 'Download All Selected Trace Files' (Not Download All Sequence Files), which should download a zip file named #{tracking_num}-some-random-number.zip."
      #   note "Upload the #{tracking_num}_ab1.zip file here."

      #   upload var: "sequencing_results"
    end

    # uploads = sequencing_uploads_zip[:sequencing_results]
    # if uploads
    #   u = Upload.find(uploads.first[:id])
    #   operations.each do |op|
    #       op.plan.associate "Order #{tracking_num} batched sequencing results", "Fresh out of the oven!", u
    #       op.input("Plasmid").item.associate "Order #{tracking_num} batched sequencing results", "Fresh out of the oven!", u
    #   end
    # end
  end

  # This method tells the technician to upload individual sequencing results
  #
  # @param tracking_num [Integer] the tracking number of results
  def upload_individual_results(tracking_num)
    operations.each { |op| op.temporary[:upload_confirmed] = false }

    5.times do
      ops = operations.reject { |op| op.temporary[:upload_confirmed] }
      break if ops.empty?
      ops.each { |op| op.temporary[:seq_name] = op.input(ORDER).item.get "seq_order_name_#{op.input(ORDER).column}".to_sym }

      sequencing_uploads = show do
        title 'Upload individual sequencing results'

        note "Unzip the downloaded zip file named #{tracking_num}_ab1.zip."
        note "If you are on a Windows machine, right click the #{tracking_num}-some-random-number.zip file, click Extract All, then click Extract."
        note 'Upload all the unzipped ab1 file below by navigating to the upzipped folder.'
        note 'You can click Command + A on Mac or Ctrl + A on Windows to select all files.'
        note 'Wait until all the uploads finished (a number appears at the end of file name).'

        upload var: 'sequencing_results'

        table ops.start_table
                 .custom_column(heading: 'Expected Filenames') { |op| op.temporary[:seq_name] + '.ab1' }
                 .end_table
      end

      # TODO: remove hacky way and replace with correct way
      op_to_file_hash = match_upload_to_operations ops, :seq_name, job_id = jid
      op_to_file_hash.each do |op, u|
        op.plan.associate "#{op.input(ORDER).sample.name} in Item #{op.temporary[:seq_name]} sequencing results", 'How do they look?', u
        stock = Item.find(op.temporary[:seq_name].split('-')[0].to_i)
        stock.associate "Item #{op.temporary[:seq_name]} sequencing results", 'How do they look?', u
        if stock.get(:from)
          overnight = nil
          if Item.exists?(stock.get(:from).to_i)
            overnight = Item.find(stock.get(:from).to_i)
          else
            op.associate("Couldn't find the overnight, but thats okay!", '') # they might have sequenced without an overnight
          end
          if overnight&.get(:from)
            overnight.associate "Item #{op.temporary[:seq_name]} sequencing results", 'How do they look?', u
            gs = Item.find(overnight.get(:from))
            gs.associate "Item #{op.temporary[:seq_name]} sequencing results", 'How do they look?', u if gs.object_type.name.include? 'Glycerol Stock'
          end
        end

        op.temporary[:upload_confirmed] = u.present?
      end
    end
  end

  # method that matches uploads to operations with a temporary[filename_key]
  def match_upload_to_operations(ops, filename_key, job_id = nil, uploads = nil)
    def extract_basename(filename)
      ext = File.extname(filename)
      basename = File.basename(filename, ext)
    end

    op_to_upload_hash = {}
    uploads ||= Upload.where('job_id' => job_id).to_a if job_id
    if uploads
      ops.each do |op|
        upload = uploads.select do |u|
          basename = extract_basename(u[:upload_file_name])
          basename.strip.include? op.temporary[filename_key].strip
        end.first || nil
        op_to_upload_hash[op] = upload
      end
    end
    op_to_upload_hash
  end

  def add_clean_up_sequencings(ops)
    ops.each do |op|
      add_clean_up_sequencing(op)
    end
  end

  def add_clean_up_sequencing(op)
    if op.plan
      stock = Item.find(op.temporary[:seq_name].split('-')[0].to_i)
      #   show do
      #       title "stock :from"
      #       note "#{stock.get(:from).blank?}"
      #   end
      plate = nil
      unless stock.get(:from).blank?
        overnight = nil
        if Item.exists?(stock.get(:from).to_i)
          overnight = Item.find(stock.get(:from).to_i)
        else
          op.associate("Couldn't find the overnight, but thats okay!", '') # they might have sequenced without an overnight
        end
        # find items that match the afts of Clean Up Sequencing if they exist
        if overnight && !overnight.get(:from).blank?
          origin_item = Item.find(overnight.get(:from))
          clean_up_op = OperationType.find_by_name('Clean Up Sequencing')
          plate_ft = clean_up_op.field_types.find { |ft| ft.name == 'Plate' }
          plate_ft.allowable_field_types.each do |aft|
            if aft.sample_type_id == overnight.sample.sample_type.id && \
               aft.object_type_id == origin_item.object_type.id
              plate = origin_item
            end
          end
        end
      end

      return if plate.blank?

      # return nothing if no item was found
      # Ensure no Clean Up Sequencing operation exists for this plasmid stock
      cus_ops = op.plan.operations.select { |op| op.name == 'Clean Up Sequencing' }
      if cus_ops.map { |op| op.input('Stock').item }.exclude?(stock)
        # Make new Clean Up Sequencing for this stock and associated plate
        ot = OperationType.find_by_name('Clean Up Sequencing')
        new_op = ot.operations.create(
          status: 'waiting',
          user_id: op.user_id
        )
        op.plan.plan_associations.create operation_id: new_op.id

        aft = ot.field_types.find { |ft| ft.name == 'Stock' }.allowable_field_types[0]
        new_op.set_property 'Stock', stock.sample, 'input', false, aft
        new_op.input('Stock').set item: stock

        aft = ot.field_types.find { |ft| ft.name == 'Plate' }.allowable_field_types[0]
        new_op.set_property 'Plate', stock.sample, 'input', false, aft
        new_op.input('Plate').set item: plate

        op.plan.reload
        new_op.reload
      end
    end
  end

  # This method notifies users that the sequencing results are ready.
  def notify_users
    user_to_op = Hash.new { |_hash, key| user_to_op[key] = [] }
    operations.each do |op|
      user_to_op[op.user].push(op)
    end

    user_to_op.each do |user, oplist|
      plans = oplist.map(&:plan).uniq
      subject = 'Sequencing Results Ready'
      message = "<p>Hello #{user.name},<br>You have sequencing results ready in Aquarium. Please check your results, and be sure to mark whether your items are verified or not on the planner page in order for your #{'plan'.pluralize(plans.length)} to move along."
      plans.each do |plan|
        message += "<br><a href='#{AQ_URL}/launcher?plan_id=#{plan.id}'>#{plan.id} - #{plan.name}</a>"
      end
      message += '</p> <p>Thanks!<br> </p> <p>This is an automated message</p>'

      user.send_email subject, message unless debug
    end
  end
end
